#####################################################################################################################
######################################### DEFINITIONS THAT DEFINE SIMULATION ########################################
#####################################################################################################################

#Number of particles to simulate CAN CHANGE THIS
i:NrHistories = 15000

#Amount of solid water added to setup on top of nozzle CAN CHANGE THIS
d:SolidWaterAdded = 45.5 mm




#####################################################################################################################
####################################### SOME FIXED PARAMETERS FOR THE SETUP #########################################
#####################################################################################################################

#Snout position (Matching RayStation), which is distance from the top of the grey box to iso
d:SnoutPosition = 0 cm

#Height of nozzle, from measurement KEEP CONSTANT
d:GreyBoxHeight = 8.7 cm

#Position of the top of the nozzle under iso, derived from snout position and nozzle height
d:Top_of_GreyBox = 0 cm - SnoutPosition
d:Top_of_Window = Top_of_GreyBox - GreyBoxHeight cm
#Top of exit window is 23.4 cm under the top of the nozzle (Matilde info from Varian)
d:Top_of_BeamExit = Top_of_GreyBox - 23.4 cm





#####################################################################################################################
############################################### SETUP GEOMETRY DEFINITION ###########################################
#####################################################################################################################

### WORLD DEFINITION ###########################################################################################
#Define world size (in cm)
d:WorldHLX = 25.0 cm
d:WorldHLY = 25.0 cm
d:WorldHLZ = 150.0 cm

#Define World
s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX       = WorldHLX cm
d:Ge/World/HLY       = WorldHLY cm
d:Ge/World/HLZ       = WorldHLZ cm
b:Ge/World/Invisible = "False"



### SOLID WATER ADDED ON TOP OF NOZZLE ##############################################################################
#Define dimensions
d:SolidWaterHLX = 12.5 cm
d:SolidWaterHLY = 12.5 cm
d:SolidWaterHLZ = 0.5 * SolidWaterAdded cm

#Define solid water plate position
#Its bottom is on the top of the grey box
d:SolidWaterTransX = 0. cm
d:SolidWaterTransY = 0. cm
d:SolidWaterTransZ = Top_of_GreyBox + SolidWaterHLZ cm

#Define solid water plate
s:Ge/SolidWater/Type = "TsBox"
s:Ge/SolidWater/Parent = "World"
s:Ge/SolidWater/Material = "G4_WATER"
d:Ge/SolidWater/HLX = SolidWaterHLX cm
d:Ge/SolidWater/HLY = SolidWaterHLY cm
d:Ge/SolidWater/HLZ = SolidWaterHLZ cm
d:Ge/SolidWater/TransX = SolidWaterTransX cm
d:Ge/SolidWater/TransY = SolidWaterTransY cm
d:Ge/SolidWater/TransZ = SolidWaterTransZ cm
d:Ge/SolidWater/RotX = 0. deg
d:Ge/SolidWater/RotY = 0. deg
d:Ge/SolidWater/RotZ = 0. deg
s:Ge/SolidWater/Color = "yellow"
s:Ge/SolidWater/DrawingStyle = "Solid"



### AIR GAP BETWEEN EXIT WINDOW AND TOP OF NOZZLE #################################################################
#Define dimensions 
d:AirGapWindowTopHLX = 12.5 cm 
d:AirGapWindowTopHLY = 12.5 cm
#Must fill the gap between the window and the top of the grey box
d:AirGap_height = Top_of_GreyBox - Top_of_Window cm
d:AirGapWindowTopHLZ = 0.5 * AirGap_height cm

#Define position
#This air gap is positioned on the top of the range shifter
d:AirGapWindowTopTransX = 0. cm
d:AirGapWindowTopTransY = 0. cm
d:AirGapWindowTopTransZ = Top_of_Window + AirGapWindowTopHLZ cm

#Define air gap between range shifter and top of nozzle
s:Ge/AirGapWindowTop/Type     = "TsBox"
s:Ge/AirGapWindowTop/Material = "G4_AIR"
s:Ge/AirGapWindowTop/Parent   = "World"
d:Ge/AirGapWindowTop/HLX      = AirGapWindowTopHLX cm
d:Ge/AirGapWindowTop/HLY      = AirGapWindowTopHLY cm
d:Ge/AirGapWindowTop/HLZ      = AirGapWindowTopHLZ cm
d:Ge/AirGapWindowTop/TransX   = AirGapWindowTopTransX cm
d:Ge/AirGapWindowTop/TransY   = AirGapWindowTopTransY cm
d:Ge/AirGapWindowTop/TransZ   = AirGapWindowTopTransZ cm
d:Ge/AirGapWindowTop/RotX     = 0. deg
d:Ge/AirGapWindowTop/RotY     = 0. deg
d:Ge/AirGapWindowTop/RotZ     = 0. deg
s:Ge/AirGapWindowTop/Color    = "blue"



### WINDOW #####################################################################################################
#Define dimensions 
d:WindowHLX = 12.5 cm
d:WindowHLY = 12.5 cm
#Set arbitrarily for now: may find out more from Varian
d:WindowHLZ = 0.05 cm

#Define position
#Top of exit window is SnoutPosition and height of nozzle under the isocentre
d:WindowTransX = 0. cm
d:WindowTransY = 0. cm
d:WindowTransZ = Top_of_Window - WindowHLZ cm

#Define Window
s:Ge/Window/Type     = "TsBox"
s:Ge/Window/Material = "G4_AIR"
s:Ge/Window/Parent   = "World"
d:Ge/Window/HLX      = WindowHLX cm
d:Ge/Window/HLY      = WindowHLY cm
d:Ge/Window/HLZ      = WindowHLZ cm
d:Ge/Window/TransX   = WindowTransX cm
d:Ge/Window/TransY   = WindowTransY cm
d:Ge/Window/TransZ   = WindowTransZ cm
d:Ge/Window/RotX     = 0. deg
d:Ge/Window/RotY     = 0. deg
d:Ge/Window/RotZ     = 0. deg
s:Ge/Window/Color    = "grey"
s:Ge/Window/DrawingStyle = "Solid"



### EXIT WINDOW #####################################################################################################
#Define dimensions 
d:ExitWindowHLX = 12.5 cm
d:ExitWindowHLY = 12.5 cm
d:ExitWindowHLZ = 0.5 cm

#Define position
d:ExitWindowTransX = 0. cm
d:ExitWindowTransY = 0. cm
d:ExitWindowTransZ = Top_of_BeamExit - ExitWindowHLZ cm

#Define ExitWindow
s:Ge/ExitWindow/Type     = "TsBox"
s:Ge/ExitWindow/Material = "G4_AIR"
s:Ge/ExitWindow/Parent   = "World"
d:Ge/ExitWindow/HLX      = ExitWindowHLX cm
d:Ge/ExitWindow/HLY      = ExitWindowHLY cm
d:Ge/ExitWindow/HLZ      = ExitWindowHLZ cm
d:Ge/ExitWindow/TransX   = ExitWindowTransX cm
d:Ge/ExitWindow/TransY   = ExitWindowTransY cm
d:Ge/ExitWindow/TransZ   = ExitWindowTransZ cm
d:Ge/ExitWindow/RotX     = 0. deg
d:Ge/ExitWindow/RotY     = 0. deg
d:Ge/ExitWindow/RotZ     = 0. deg
s:Ge/ExitWindow/Color    = "grey"
s:Ge/ExitWindow/DrawingStyle = "Solid"



### AIR GAP BETWEEN EXIT WINDOW AND WINDOW ##########################################################################
#Because the exit window is where the vacuum ends

#Define dimensions, spans between exit window and window
d:AirGapWindowsHLX = 12.5 cm
d:AirGapWindowsHLY = 12.5 cm
d:Bottom_of_window = WindowTransZ - WindowHLZ cm
d:AirGap_windows_height = Bottom_of_window - Top_of_BeamExit cm
d:AirGapWindowsHLZ = 0.5 * AirGap_windows_height cm

#Define position, spans between exit window and window
d:AirGapWindowsTransX = 0. cm
d:AirGapWindowsTransY = 0. cm
d:AirGapWindowsTransZ = Top_of_BeamExit + AirGapWindowsHLZ cm

#Define air gap between range shifter and top of nozzle
s:Ge/AirGapWindows/Type     = "TsBox"
s:Ge/AirGapWindows/Material = "G4_AIR"
s:Ge/AirGapWindows/Parent   = "World"
d:Ge/AirGapWindows/HLX      = AirGapWindowsHLX cm
d:Ge/AirGapWindows/HLY      = AirGapWindowsHLY cm
d:Ge/AirGapWindows/HLZ      = AirGapWindowsHLZ cm
d:Ge/AirGapWindows/TransX   = AirGapWindowsTransX cm
d:Ge/AirGapWindows/TransY   = AirGapWindowsTransY cm
d:Ge/AirGapWindows/TransZ   = AirGapWindowsTransZ cm
d:Ge/AirGapWindows/RotX     = 0. deg
d:Ge/AirGapWindows/RotY     = 0. deg
d:Ge/AirGapWindows/RotZ     = 0. deg
s:Ge/AirGapWindows/Color    = "blue"





#####################################################################################################################
################################################# OUTPUT DEFINITIONS ################################################
#####################################################################################################################

### SCORER 0 mm ############################################################################################
#Define scorer dimension
d:Scorer0HLX = 0.5 cm
d:Scorer0HLY = 0.5 cm
d:Scorer0HLZ = 0.005 mm

#Define scorer position
d:Scorer0TransX = 0. cm
d:Scorer0TransY = 0. cm
#Scorer will be at the start of the water phantom
d:Scorer0TransZ = Scorer0HLZ - SolidWaterHLZ cm

#Define scorer
s:Ge/Scorer0/Type = "TsBox"
s:Ge/Scorer0/Parent = "SolidWater"
s:Ge/Scorer0/Material = "G4_WATER"
d:Ge/Scorer0/HLX = Scorer0HLX cm
d:Ge/Scorer0/HLY = Scorer0HLY cm
d:Ge/Scorer0/HLZ = Scorer0HLZ cm
d:Ge/Scorer0/TransX = Scorer0TransX cm
d:Ge/Scorer0/TransY = Scorer0TransY cm
d:Ge/Scorer0/TransZ = Scorer0TransZ cm
d:Ge/Scorer0/RotX = 0. deg
d:Ge/Scorer0/RotY = 0. deg
d:Ge/Scorer0/RotZ = 0. deg
s:Ge/Scorer0/Color = "red"
s:Ge/Scorer0/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_0/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_0/Quantity = "ProtonLET"
s:Sc/LET_0/Component = "Scorer0"
s:Sc/LET_0/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_0/OutputType = "csv"
s:Sc/LET_0/OutputFile = "./do_9spots/LET/0"

#Scoring Dose
s:Sc/Dose_0/Quantity = "DoseToWater"
s:Sc/Dose_0/Component = "Scorer0"
s:Sc/Dose_0/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_0/OutputType = "csv"
s:Sc/Dose_0/OutputFile = "./do_9spots/Dose/0"

### SCORER 10 mm ############################################################################################
#Define scorer dimension
d:Scorer10HLX = 0.5 cm
d:Scorer10HLY = 0.5 cm
d:Scorer10HLZ = 0.005 mm

#Define scorer position
d:Scorer10TransX = 0. cm
d:Scorer10TransY = 0. cm
d:Scorer10TransZ = Scorer0TransZ + 1 cm

#Define scorer
s:Ge/Scorer10/Type = "TsBox"
s:Ge/Scorer10/Parent = "SolidWater"
s:Ge/Scorer10/Material = "G4_WATER"
d:Ge/Scorer10/HLX = Scorer10HLX cm
d:Ge/Scorer10/HLY = Scorer10HLY cm
d:Ge/Scorer10/HLZ = Scorer10HLZ cm
d:Ge/Scorer10/TransX = Scorer10TransX cm
d:Ge/Scorer10/TransY = Scorer10TransY cm
d:Ge/Scorer10/TransZ = Scorer10TransZ cm
d:Ge/Scorer10/RotX = 0. deg
d:Ge/Scorer10/RotY = 0. deg
d:Ge/Scorer10/RotZ = 0. deg
s:Ge/Scorer10/Color = "red"
s:Ge/Scorer10/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_10/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_10/Quantity = "ProtonLET"
s:Sc/LET_10/Component = "Scorer10"
s:Sc/LET_10/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_10/OutputType = "csv"
s:Sc/LET_10/OutputFile = "./do_9spots/LET/10"

#Scoring Dose
s:Sc/Dose_10/Quantity = "DoseToWater"
s:Sc/Dose_10/Component = "Scorer10"
s:Sc/Dose_10/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_10/OutputType = "csv"
s:Sc/Dose_10/OutputFile = "./do_9spots/Dose/10"

### SCORER 20 mm ############################################################################################
#Define scorer position
d:Scorer20TransX = 0. cm
d:Scorer20TransY = 0. cm
d:Scorer20TransZ = Scorer0TransZ + 2 cm

#Define scorer
s:Ge/Scorer20/Type = "TsBox"
s:Ge/Scorer20/Parent = "SolidWater"
s:Ge/Scorer20/Material = "G4_WATER"
d:Ge/Scorer20/HLX = Scorer0HLX cm
d:Ge/Scorer20/HLY = Scorer0HLY cm
d:Ge/Scorer20/HLZ = Scorer0HLZ cm
d:Ge/Scorer20/TransX = Scorer0TransX cm
d:Ge/Scorer20/TransY = Scorer0TransY cm
d:Ge/Scorer20/TransZ = Scorer20TransZ cm
d:Ge/Scorer20/RotX = 0. deg
d:Ge/Scorer20/RotY = 0. deg
d:Ge/Scorer20/RotZ = 0. deg
s:Ge/Scorer20/Color = "red"
s:Ge/Scorer20/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_20/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_20/Quantity = "ProtonLET"
s:Sc/LET_20/Component = "Scorer20"
s:Sc/LET_20/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_20/OutputType = "csv"
s:Sc/LET_20/OutputFile = "./do_9spots/LET/20"

#Scoring Dose
s:Sc/Dose_20/Quantity = "DoseToWater"
s:Sc/Dose_20/Component = "Scorer20"
s:Sc/Dose_20/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_20/OutputType = "csv"
s:Sc/Dose_20/OutputFile = "./do_9spots/Dose/20"

### SCORER 30 mm ############################################################################################
#Define scorer position
d:Scorer30TransX = 0. cm
d:Scorer30TransY = 0. cm
d:Scorer30TransZ = Scorer0TransZ + 3 cm

#Define scorer
s:Ge/Scorer30/Type = "TsBox"
s:Ge/Scorer30/Parent = "SolidWater"
s:Ge/Scorer30/Material = "G4_WATER"
d:Ge/Scorer30/HLX = Scorer0HLX cm
d:Ge/Scorer30/HLY = Scorer0HLY cm
d:Ge/Scorer30/HLZ = Scorer0HLZ cm
d:Ge/Scorer30/TransX = Scorer0TransX cm
d:Ge/Scorer30/TransY = Scorer0TransY cm
d:Ge/Scorer30/TransZ = Scorer30TransZ cm
d:Ge/Scorer30/RotX = 0. deg
d:Ge/Scorer30/RotY = 0. deg
d:Ge/Scorer30/RotZ = 0. deg
s:Ge/Scorer30/Color = "red"
s:Ge/Scorer30/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_30/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_30/Quantity = "ProtonLET"
s:Sc/LET_30/Component = "Scorer30"
s:Sc/LET_30/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_30/OutputType = "csv"
s:Sc/LET_30/OutputFile = "./do_9spots/LET/30"

#Scoring Dose
s:Sc/Dose_30/Quantity = "DoseToWater"
s:Sc/Dose_30/Component = "Scorer30"
s:Sc/Dose_30/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_30/OutputType = "csv"
s:Sc/Dose_30/OutputFile = "./do_9spots/Dose/30"

### SCORER 32 mm ############################################################################################
#Define scorer position
d:Scorer32TransX = 0. cm
d:Scorer32TransY = 0. cm
d:Scorer32TransZ = Scorer0TransZ + 3.2 cm

#Define scorer
s:Ge/Scorer32/Type = "TsBox"
s:Ge/Scorer32/Parent = "SolidWater"
s:Ge/Scorer32/Material = "G4_WATER"
d:Ge/Scorer32/HLX = Scorer0HLX cm
d:Ge/Scorer32/HLY = Scorer0HLY cm
d:Ge/Scorer32/HLZ = Scorer0HLZ cm
d:Ge/Scorer32/TransX = Scorer0TransX cm
d:Ge/Scorer32/TransY = Scorer0TransY cm
d:Ge/Scorer32/TransZ = Scorer32TransZ cm
d:Ge/Scorer32/RotX = 0. deg
d:Ge/Scorer32/RotY = 0. deg
d:Ge/Scorer32/RotZ = 0. deg
s:Ge/Scorer32/Color = "red"
s:Ge/Scorer32/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_32/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_32/Quantity = "ProtonLET"
s:Sc/LET_32/Component = "Scorer32"
s:Sc/LET_32/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_32/OutputType = "csv"
s:Sc/LET_32/OutputFile = "./do_9spots/LET/32"

#Scoring Dose
s:Sc/Dose_32/Quantity = "DoseToWater"
s:Sc/Dose_32/Component = "Scorer32"
s:Sc/Dose_32/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_32/OutputType = "csv"
s:Sc/Dose_32/OutputFile = "./do_9spots/Dose/32"

### SCORER 34 mm ############################################################################################
#Define scorer position
d:Scorer34TransX = 0. cm
d:Scorer34TransY = 0. cm
d:Scorer34TransZ = Scorer0TransZ + 3.4 cm

#Define scorer
s:Ge/Scorer34/Type = "TsBox"
s:Ge/Scorer34/Parent = "SolidWater"
s:Ge/Scorer34/Material = "G4_WATER"
d:Ge/Scorer34/HLX = Scorer0HLX cm
d:Ge/Scorer34/HLY = Scorer0HLY cm
d:Ge/Scorer34/HLZ = Scorer0HLZ cm
d:Ge/Scorer34/TransX = Scorer0TransX cm
d:Ge/Scorer34/TransY = Scorer0TransY cm
d:Ge/Scorer34/TransZ = Scorer34TransZ cm
d:Ge/Scorer34/RotX = 0. deg
d:Ge/Scorer34/RotY = 0. deg
d:Ge/Scorer34/RotZ = 0. deg
s:Ge/Scorer34/Color = "red"
s:Ge/Scorer34/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_34/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_34/Quantity = "ProtonLET"
s:Sc/LET_34/Component = "Scorer34"
s:Sc/LET_34/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_34/OutputType = "csv"
s:Sc/LET_34/OutputFile = "./do_9spots/LET/34"

#Scoring Dose
s:Sc/Dose_34/Quantity = "DoseToWater"
s:Sc/Dose_34/Component = "Scorer34"
s:Sc/Dose_34/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_34/OutputType = "csv"
s:Sc/Dose_34/OutputFile = "./do_9spots/Dose/34"

### SCORER 36 mm ############################################################################################
#Define scorer position
d:Scorer36TransX = 0. cm
d:Scorer36TransY = 0. cm
d:Scorer36TransZ = Scorer0TransZ + 3.6 cm

#Define scorer
s:Ge/Scorer36/Type = "TsBox"
s:Ge/Scorer36/Parent = "SolidWater"
s:Ge/Scorer36/Material = "G4_WATER"
d:Ge/Scorer36/HLX = Scorer0HLX cm
d:Ge/Scorer36/HLY = Scorer0HLY cm
d:Ge/Scorer36/HLZ = Scorer0HLZ cm
d:Ge/Scorer36/TransX = Scorer0TransX cm
d:Ge/Scorer36/TransY = Scorer0TransY cm
d:Ge/Scorer36/TransZ = Scorer36TransZ cm
d:Ge/Scorer36/RotX = 0. deg
d:Ge/Scorer36/RotY = 0. deg
d:Ge/Scorer36/RotZ = 0. deg
s:Ge/Scorer36/Color = "red"
s:Ge/Scorer36/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_36/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_36/Quantity = "ProtonLET"
s:Sc/LET_36/Component = "Scorer36"
s:Sc/LET_36/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_36/OutputType = "csv"
s:Sc/LET_36/OutputFile = "./do_9spots/LET/36"

#Scoring Dose
s:Sc/Dose_36/Quantity = "DoseToWater"
s:Sc/Dose_36/Component = "Scorer36"
s:Sc/Dose_36/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_36/OutputType = "csv"
s:Sc/Dose_36/OutputFile = "./do_9spots/Dose/36"

### SCORER 36.5 mm ############################################################################################
#Define scorer position
d:Scorer365TransX = 0. cm
d:Scorer365TransY = 0. cm
d:Scorer365TransZ = Scorer0TransZ + 3.65 cm

#Define scorer
s:Ge/Scorer365/Type = "TsBox"
s:Ge/Scorer365/Parent = "SolidWater"
s:Ge/Scorer365/Material = "G4_WATER"
d:Ge/Scorer365/HLX = Scorer0HLX cm
d:Ge/Scorer365/HLY = Scorer0HLY cm
d:Ge/Scorer365/HLZ = Scorer0HLZ cm
d:Ge/Scorer365/TransX = Scorer0TransX cm
d:Ge/Scorer365/TransY = Scorer0TransY cm
d:Ge/Scorer365/TransZ = Scorer365TransZ cm
d:Ge/Scorer365/RotX = 0. deg
d:Ge/Scorer365/RotY = 0. deg
d:Ge/Scorer365/RotZ = 0. deg
s:Ge/Scorer365/Color = "red"
s:Ge/Scorer365/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_365/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_365/Quantity = "ProtonLET"
s:Sc/LET_365/Component = "Scorer365"
s:Sc/LET_365/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_365/OutputType = "csv"
s:Sc/LET_365/OutputFile = "./do_9spots/LET/36.5"

#Scoring Dose
s:Sc/Dose_365/Quantity = "DoseToWater"
s:Sc/Dose_365/Component = "Scorer365"
s:Sc/Dose_365/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_365/OutputType = "csv"
s:Sc/Dose_365/OutputFile = "./do_9spots/Dose/36.5"

### SCORER 37 mm ############################################################################################
#Define scorer position
d:Scorer37TransX = 0. cm
d:Scorer37TransY = 0. cm
d:Scorer37TransZ = Scorer0TransZ + 3.7 cm

#Define scorer
s:Ge/Scorer37/Type = "TsBox"
s:Ge/Scorer37/Parent = "SolidWater"
s:Ge/Scorer37/Material = "G4_WATER"
d:Ge/Scorer37/HLX = Scorer0HLX cm
d:Ge/Scorer37/HLY = Scorer0HLY cm
d:Ge/Scorer37/HLZ = Scorer0HLZ cm
d:Ge/Scorer37/TransX = Scorer0TransX cm
d:Ge/Scorer37/TransY = Scorer0TransY cm
d:Ge/Scorer37/TransZ = Scorer37TransZ cm
d:Ge/Scorer37/RotX = 0. deg
d:Ge/Scorer37/RotY = 0. deg
d:Ge/Scorer37/RotZ = 0. deg
s:Ge/Scorer37/Color = "red"
s:Ge/Scorer37/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_37/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_37/Quantity = "ProtonLET"
s:Sc/LET_37/Component = "Scorer37"
s:Sc/LET_37/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_37/OutputType = "csv"
s:Sc/LET_37/OutputFile = "./do_9spots/LET/37"

#Scoring Dose
s:Sc/Dose_37/Quantity = "DoseToWater"
s:Sc/Dose_37/Component = "Scorer37"
s:Sc/Dose_37/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_37/OutputType = "csv"
s:Sc/Dose_37/OutputFile = "./do_9spots/Dose/37"

### SCORER 37.5 mm ############################################################################################
#Define scorer position
d:Scorer375TransX = 0. cm
d:Scorer375TransY = 0. cm
d:Scorer375TransZ = Scorer0TransZ + 3.75 cm

#Define scorer
s:Ge/Scorer375/Type = "TsBox"
s:Ge/Scorer375/Parent = "SolidWater"
s:Ge/Scorer375/Material = "G4_WATER"
d:Ge/Scorer375/HLX = Scorer0HLX cm
d:Ge/Scorer375/HLY = Scorer0HLY cm
d:Ge/Scorer375/HLZ = Scorer0HLZ cm
d:Ge/Scorer375/TransX = Scorer0TransX cm
d:Ge/Scorer375/TransY = Scorer0TransY cm
d:Ge/Scorer375/TransZ = Scorer375TransZ cm
d:Ge/Scorer375/RotX = 0. deg
d:Ge/Scorer375/RotY = 0. deg
d:Ge/Scorer375/RotZ = 0. deg
s:Ge/Scorer375/Color = "red"
s:Ge/Scorer375/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_375/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_375/Quantity = "ProtonLET"
s:Sc/LET_375/Component = "Scorer375"
s:Sc/LET_375/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_375/OutputType = "csv"
s:Sc/LET_375/OutputFile = "./do_9spots/LET/37.5"

#Scoring Dose
s:Sc/Dose_375/Quantity = "DoseToWater"
s:Sc/Dose_375/Component = "Scorer375"
s:Sc/Dose_375/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_375/OutputType = "csv"
s:Sc/Dose_375/OutputFile = "./do_9spots/Dose/37.5"

### SCORER 38 mm ############################################################################################
#Define scorer position
d:Scorer38TransX = 0. cm
d:Scorer38TransY = 0. cm
d:Scorer38TransZ = Scorer0TransZ + 3.8 cm

#Define scorer
s:Ge/Scorer38/Type = "TsBox"
s:Ge/Scorer38/Parent = "SolidWater"
s:Ge/Scorer38/Material = "G4_WATER"
d:Ge/Scorer38/HLX = Scorer0HLX cm
d:Ge/Scorer38/HLY = Scorer0HLY cm
d:Ge/Scorer38/HLZ = Scorer0HLZ cm
d:Ge/Scorer38/TransX = Scorer0TransX cm
d:Ge/Scorer38/TransY = Scorer0TransY cm
d:Ge/Scorer38/TransZ = Scorer38TransZ cm
d:Ge/Scorer38/RotX = 0. deg
d:Ge/Scorer38/RotY = 0. deg
d:Ge/Scorer38/RotZ = 0. deg
s:Ge/Scorer38/Color = "red"
s:Ge/Scorer38/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_38/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_38/Quantity = "ProtonLET"
s:Sc/LET_38/Component = "Scorer38"
s:Sc/LET_38/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_38/OutputType = "csv"
s:Sc/LET_38/OutputFile = "./do_9spots/LET/38"

#Scoring Dose
s:Sc/Dose_38/Quantity = "DoseToWater"
s:Sc/Dose_38/Component = "Scorer38"
s:Sc/Dose_38/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_38/OutputType = "csv"
s:Sc/Dose_38/OutputFile = "./do_9spots/Dose/38"

### SCORER 38.5 mm ############################################################################################
#Define scorer position
d:Scorer385TransX = 0. cm
d:Scorer385TransY = 0. cm
d:Scorer385TransZ = Scorer0TransZ + 3.85 cm

#Define scorer
s:Ge/Scorer385/Type = "TsBox"
s:Ge/Scorer385/Parent = "SolidWater"
s:Ge/Scorer385/Material = "G4_WATER"
d:Ge/Scorer385/HLX = Scorer0HLX cm
d:Ge/Scorer385/HLY = Scorer0HLY cm
d:Ge/Scorer385/HLZ = Scorer0HLZ cm
d:Ge/Scorer385/TransX = Scorer0TransX cm
d:Ge/Scorer385/TransY = Scorer0TransY cm
d:Ge/Scorer385/TransZ = Scorer385TransZ cm
d:Ge/Scorer385/RotX = 0. deg
d:Ge/Scorer385/RotY = 0. deg
d:Ge/Scorer385/RotZ = 0. deg
s:Ge/Scorer385/Color = "red"
s:Ge/Scorer385/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_385/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_385/Quantity = "ProtonLET"
s:Sc/LET_385/Component = "Scorer385"
s:Sc/LET_385/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_385/OutputType = "csv"
s:Sc/LET_385/OutputFile = "./do_9spots/LET/38.5"

#Scoring Dose
s:Sc/Dose_385/Quantity = "DoseToWater"
s:Sc/Dose_385/Component = "Scorer385"
s:Sc/Dose_385/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_385/OutputType = "csv"
s:Sc/Dose_385/OutputFile = "./do_9spots/Dose/38.5"

### SCORER 38.6 mm ############################################################################################
#Define scorer position
d:Scorer386TransX = 0. cm
d:Scorer386TransY = 0. cm
d:Scorer386TransZ = Scorer0TransZ + 3.86 cm

#Define scorer
s:Ge/Scorer386/Type = "TsBox"
s:Ge/Scorer386/Parent = "SolidWater"
s:Ge/Scorer386/Material = "G4_WATER"
d:Ge/Scorer386/HLX = Scorer0HLX cm
d:Ge/Scorer386/HLY = Scorer0HLY cm
d:Ge/Scorer386/HLZ = Scorer0HLZ cm
d:Ge/Scorer386/TransX = Scorer0TransX cm
d:Ge/Scorer386/TransY = Scorer0TransY cm
d:Ge/Scorer386/TransZ = Scorer386TransZ cm
d:Ge/Scorer386/RotX = 0. deg
d:Ge/Scorer386/RotY = 0. deg
d:Ge/Scorer386/RotZ = 0. deg
s:Ge/Scorer386/Color = "red"
s:Ge/Scorer386/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_386/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_386/Quantity = "ProtonLET"
s:Sc/LET_386/Component = "Scorer386"
s:Sc/LET_386/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_386/OutputType = "csv"
s:Sc/LET_386/OutputFile = "./do_9spots/LET/38.6"

#Scoring Dose
s:Sc/Dose_386/Quantity = "DoseToWater"
s:Sc/Dose_386/Component = "Scorer386"
s:Sc/Dose_386/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_386/OutputType = "csv"
s:Sc/Dose_386/OutputFile = "./do_9spots/Dose/38.6"

### SCORER 38.8 mm ############################################################################################
#Define scorer position
d:Scorer388TransX = 0. cm
d:Scorer388TransY = 0. cm
d:Scorer388TransZ = Scorer0TransZ + 3.88 cm

#Define scorer
s:Ge/Scorer388/Type = "TsBox"
s:Ge/Scorer388/Parent = "SolidWater"
s:Ge/Scorer388/Material = "G4_WATER"
d:Ge/Scorer388/HLX = Scorer0HLX cm
d:Ge/Scorer388/HLY = Scorer0HLY cm
d:Ge/Scorer388/HLZ = Scorer0HLZ cm
d:Ge/Scorer388/TransX = Scorer0TransX cm
d:Ge/Scorer388/TransY = Scorer0TransY cm
d:Ge/Scorer388/TransZ = Scorer388TransZ cm
d:Ge/Scorer388/RotX = 0. deg
d:Ge/Scorer388/RotY = 0. deg
d:Ge/Scorer388/RotZ = 0. deg
s:Ge/Scorer388/Color = "red"
s:Ge/Scorer388/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_388/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_388/Quantity = "ProtonLET"
s:Sc/LET_388/Component = "Scorer388"
s:Sc/LET_388/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_388/OutputType = "csv"
s:Sc/LET_388/OutputFile = "./do_9spots/LET/38.8"

#Scoring Dose
s:Sc/Dose_388/Quantity = "DoseToWater"
s:Sc/Dose_388/Component = "Scorer388"
s:Sc/Dose_388/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_388/OutputType = "csv"
s:Sc/Dose_388/OutputFile = "./do_9spots/Dose/38.8"

### SCORER 39 mm ############################################################################################
#Define scorer position
d:Scorer39TransX = 0. cm
d:Scorer39TransY = 0. cm
d:Scorer39TransZ = Scorer0TransZ + 3.9 cm

#Define scorer
s:Ge/Scorer39/Type = "TsBox"
s:Ge/Scorer39/Parent = "SolidWater"
s:Ge/Scorer39/Material = "G4_WATER"
d:Ge/Scorer39/HLX = Scorer0HLX cm
d:Ge/Scorer39/HLY = Scorer0HLY cm
d:Ge/Scorer39/HLZ = Scorer0HLZ cm
d:Ge/Scorer39/TransX = Scorer0TransX cm
d:Ge/Scorer39/TransY = Scorer0TransY cm
d:Ge/Scorer39/TransZ = Scorer39TransZ cm
d:Ge/Scorer39/RotX = 0. deg
d:Ge/Scorer39/RotY = 0. deg
d:Ge/Scorer39/RotZ = 0. deg
s:Ge/Scorer39/Color = "red"
s:Ge/Scorer39/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_39/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_39/Quantity = "ProtonLET"
s:Sc/LET_39/Component = "Scorer39"
s:Sc/LET_39/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_39/OutputType = "csv"
s:Sc/LET_39/OutputFile = "./do_9spots/LET/39"

#Scoring Dose
s:Sc/Dose_39/Quantity = "DoseToWater"
s:Sc/Dose_39/Component = "Scorer39"
s:Sc/Dose_39/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_39/OutputType = "csv"
s:Sc/Dose_39/OutputFile = "./do_9spots/Dose/39"

### SCORER 39.2 mm ############################################################################################
#Define scorer position
d:Scorer392TransX = 0. cm
d:Scorer392TransY = 0. cm
d:Scorer392TransZ = Scorer0TransZ + 3.92 cm

#Define scorer
s:Ge/Scorer392/Type = "TsBox"
s:Ge/Scorer392/Parent = "SolidWater"
s:Ge/Scorer392/Material = "G4_WATER"
d:Ge/Scorer392/HLX = Scorer0HLX cm
d:Ge/Scorer392/HLY = Scorer0HLY cm
d:Ge/Scorer392/HLZ = Scorer0HLZ cm
d:Ge/Scorer392/TransX = Scorer0TransX cm
d:Ge/Scorer392/TransY = Scorer0TransY cm
d:Ge/Scorer392/TransZ = Scorer392TransZ cm
d:Ge/Scorer392/RotX = 0. deg
d:Ge/Scorer392/RotY = 0. deg
d:Ge/Scorer392/RotZ = 0. deg
s:Ge/Scorer392/Color = "red"
s:Ge/Scorer392/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_392/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_392/Quantity = "ProtonLET"
s:Sc/LET_392/Component = "Scorer392"
s:Sc/LET_392/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_392/OutputType = "csv"
s:Sc/LET_392/OutputFile = "./do_9spots/LET/39.2"

#Scoring Dose
s:Sc/Dose_392/Quantity = "DoseToWater"
s:Sc/Dose_392/Component = "Scorer392"
s:Sc/Dose_392/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_392/OutputType = "csv"
s:Sc/Dose_392/OutputFile = "./do_9spots/Dose/39.2"

### SCORER 39.4 mm ############################################################################################
#Define scorer position
d:Scorer394TransX = 0. cm
d:Scorer394TransY = 0. cm
d:Scorer394TransZ = Scorer0TransZ + 3.94 cm

#Define scorer
s:Ge/Scorer394/Type = "TsBox"
s:Ge/Scorer394/Parent = "SolidWater"
s:Ge/Scorer394/Material = "G4_WATER"
d:Ge/Scorer394/HLX = Scorer0HLX cm
d:Ge/Scorer394/HLY = Scorer0HLY cm
d:Ge/Scorer394/HLZ = Scorer0HLZ cm
d:Ge/Scorer394/TransX = Scorer0TransX cm
d:Ge/Scorer394/TransY = Scorer0TransY cm
d:Ge/Scorer394/TransZ = Scorer394TransZ cm
d:Ge/Scorer394/RotX = 0. deg
d:Ge/Scorer394/RotY = 0. deg
d:Ge/Scorer394/RotZ = 0. deg
s:Ge/Scorer394/Color = "red"
s:Ge/Scorer394/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_394/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_394/Quantity = "ProtonLET"
s:Sc/LET_394/Component = "Scorer394"
s:Sc/LET_394/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_394/OutputType = "csv"
s:Sc/LET_394/OutputFile = "./do_9spots/LET/39.4"

#Scoring Dose
s:Sc/Dose_394/Quantity = "DoseToWater"
s:Sc/Dose_394/Component = "Scorer394"
s:Sc/Dose_394/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_394/OutputType = "csv"
s:Sc/Dose_394/OutputFile = "./do_9spots/Dose/39.4"

### SCORER 39.5 mm ############################################################################################
#Define scorer position
d:Scorer395TransX = 0. cm
d:Scorer395TransY = 0. cm
d:Scorer395TransZ = Scorer0TransZ + 3.95 cm

#Define scorer
s:Ge/Scorer395/Type = "TsBox"
s:Ge/Scorer395/Parent = "SolidWater"
s:Ge/Scorer395/Material = "G4_WATER"
d:Ge/Scorer395/HLX = Scorer0HLX cm
d:Ge/Scorer395/HLY = Scorer0HLY cm
d:Ge/Scorer395/HLZ = Scorer0HLZ cm
d:Ge/Scorer395/TransX = Scorer0TransX cm
d:Ge/Scorer395/TransY = Scorer0TransY cm
d:Ge/Scorer395/TransZ = Scorer395TransZ cm
d:Ge/Scorer395/RotX = 0. deg
d:Ge/Scorer395/RotY = 0. deg
d:Ge/Scorer395/RotZ = 0. deg
s:Ge/Scorer395/Color = "red"
s:Ge/Scorer395/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_395/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_395/Quantity = "ProtonLET"
s:Sc/LET_395/Component = "Scorer395"
s:Sc/LET_395/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_395/OutputType = "csv"
s:Sc/LET_395/OutputFile = "./do_9spots/LET/39.5"

#Scoring Dose
s:Sc/Dose_395/Quantity = "DoseToWater"
s:Sc/Dose_395/Component = "Scorer395"
s:Sc/Dose_395/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_395/OutputType = "csv"
s:Sc/Dose_395/OutputFile = "./do_9spots/Dose/39.5"

### SCORER 39.6 mm ############################################################################################
#Define scorer position
d:Scorer396TransX = 0. cm
d:Scorer396TransY = 0. cm
d:Scorer396TransZ = Scorer0TransZ + 3.96 cm

#Define scorer
s:Ge/Scorer396/Type = "TsBox"
s:Ge/Scorer396/Parent = "SolidWater"
s:Ge/Scorer396/Material = "G4_WATER"
d:Ge/Scorer396/HLX = Scorer0HLX cm
d:Ge/Scorer396/HLY = Scorer0HLY cm
d:Ge/Scorer396/HLZ = Scorer0HLZ cm
d:Ge/Scorer396/TransX = Scorer0TransX cm
d:Ge/Scorer396/TransY = Scorer0TransY cm
d:Ge/Scorer396/TransZ = Scorer396TransZ cm
d:Ge/Scorer396/RotX = 0. deg
d:Ge/Scorer396/RotY = 0. deg
d:Ge/Scorer396/RotZ = 0. deg
s:Ge/Scorer396/Color = "red"
s:Ge/Scorer396/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_396/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_396/Quantity = "ProtonLET"
s:Sc/LET_396/Component = "Scorer396"
s:Sc/LET_396/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_396/OutputType = "csv"
s:Sc/LET_396/OutputFile = "./do_9spots/LET/39.6"

#Scoring Dose
s:Sc/Dose_396/Quantity = "DoseToWater"
s:Sc/Dose_396/Component = "Scorer396"
s:Sc/Dose_396/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_396/OutputType = "csv"
s:Sc/Dose_396/OutputFile = "./do_9spots/Dose/39.6"

### SCORER 39.8 mm ############################################################################################
#Define scorer position
d:Scorer398TransX = 0. cm
d:Scorer398TransY = 0. cm
d:Scorer398TransZ = Scorer0TransZ + 3.98 cm

#Define scorer
s:Ge/Scorer398/Type = "TsBox"
s:Ge/Scorer398/Parent = "SolidWater"
s:Ge/Scorer398/Material = "G4_WATER"
d:Ge/Scorer398/HLX = Scorer0HLX cm
d:Ge/Scorer398/HLY = Scorer0HLY cm
d:Ge/Scorer398/HLZ = Scorer0HLZ cm
d:Ge/Scorer398/TransX = Scorer0TransX cm
d:Ge/Scorer398/TransY = Scorer0TransY cm
d:Ge/Scorer398/TransZ = Scorer398TransZ cm
d:Ge/Scorer398/RotX = 0. deg
d:Ge/Scorer398/RotY = 0. deg
d:Ge/Scorer398/RotZ = 0. deg
s:Ge/Scorer398/Color = "red"
s:Ge/Scorer398/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_398/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_398/Quantity = "ProtonLET"
s:Sc/LET_398/Component = "Scorer398"
s:Sc/LET_398/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_398/OutputType = "csv"
s:Sc/LET_398/OutputFile = "./do_9spots/LET/39.8"

#Scoring Dose
s:Sc/Dose_398/Quantity = "DoseToWater"
s:Sc/Dose_398/Component = "Scorer398"
s:Sc/Dose_398/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_398/OutputType = "csv"
s:Sc/Dose_398/OutputFile = "./do_9spots/Dose/39.8"

### SCORER 40 mm ############################################################################################
#Define scorer position
d:Scorer40TransX = 0. cm
d:Scorer40TransY = 0. cm
d:Scorer40TransZ = Scorer0TransZ + 4 cm

#Define scorer
s:Ge/Scorer40/Type = "TsBox"
s:Ge/Scorer40/Parent = "SolidWater"
s:Ge/Scorer40/Material = "G4_WATER"
d:Ge/Scorer40/HLX = Scorer0HLX cm
d:Ge/Scorer40/HLY = Scorer0HLY cm
d:Ge/Scorer40/HLZ = Scorer0HLZ cm
d:Ge/Scorer40/TransX = Scorer0TransX cm
d:Ge/Scorer40/TransY = Scorer0TransY cm
d:Ge/Scorer40/TransZ = Scorer40TransZ cm
d:Ge/Scorer40/RotX = 0. deg
d:Ge/Scorer40/RotY = 0. deg
d:Ge/Scorer40/RotZ = 0. deg
s:Ge/Scorer40/Color = "red"
s:Ge/Scorer40/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_40/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_40/Quantity = "ProtonLET"
s:Sc/LET_40/Component = "Scorer40"
s:Sc/LET_40/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_40/OutputType = "csv"
s:Sc/LET_40/OutputFile = "./do_9spots/LET/40"

#Scoring Dose
s:Sc/Dose_40/Quantity = "DoseToWater"
s:Sc/Dose_40/Component = "Scorer40"
s:Sc/Dose_40/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_40/OutputType = "csv"
s:Sc/Dose_40/OutputFile = "./do_9spots/Dose/40"

### SCORER 40.2mm ############################################################################################
#Define scorer position
d:Scorer402TransX = 0. cm
d:Scorer402TransY = 0. cm
d:Scorer402TransZ = Scorer0TransZ + 4.02 cm

#Define scorer
s:Ge/Scorer402/Type = "TsBox"
s:Ge/Scorer402/Parent = "SolidWater"
s:Ge/Scorer402/Material = "G4_WATER"
d:Ge/Scorer402/HLX = Scorer0HLX cm
d:Ge/Scorer402/HLY = Scorer0HLY cm
d:Ge/Scorer402/HLZ = Scorer0HLZ cm
d:Ge/Scorer402/TransX = Scorer0TransX cm
d:Ge/Scorer402/TransY = Scorer0TransY cm
d:Ge/Scorer402/TransZ = Scorer402TransZ cm
d:Ge/Scorer402/RotX = 0. deg
d:Ge/Scorer402/RotY = 0. deg
d:Ge/Scorer402/RotZ = 0. deg
s:Ge/Scorer402/Color = "red"
s:Ge/Scorer402/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_402/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_402/Quantity = "ProtonLET"
s:Sc/LET_402/Component = "Scorer402"
s:Sc/LET_402/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_402/OutputType = "csv"
s:Sc/LET_402/OutputFile = "./do_9spots/LET/40.2"

#Scoring Dose
s:Sc/Dose_402/Quantity = "DoseToWater"
s:Sc/Dose_402/Component = "Scorer402"
s:Sc/Dose_402/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_402/OutputType = "csv"
s:Sc/Dose_402/OutputFile = "./do_9spots/Dose/40.2"

### SCORER 40.4 mm ############################################################################################
#Define scorer position
d:Scorer404TransX = 0. cm
d:Scorer404TransY = 0. cm
d:Scorer404TransZ = Scorer0TransZ + 4.04 cm

#Define scorer
s:Ge/Scorer404/Type = "TsBox"
s:Ge/Scorer404/Parent = "SolidWater"
s:Ge/Scorer404/Material = "G4_WATER"
d:Ge/Scorer404/HLX = Scorer0HLX cm
d:Ge/Scorer404/HLY = Scorer0HLY cm
d:Ge/Scorer404/HLZ = Scorer0HLZ cm
d:Ge/Scorer404/TransX = Scorer0TransX cm
d:Ge/Scorer404/TransY = Scorer0TransY cm
d:Ge/Scorer404/TransZ = Scorer404TransZ cm
d:Ge/Scorer404/RotX = 0. deg
d:Ge/Scorer404/RotY = 0. deg
d:Ge/Scorer404/RotZ = 0. deg
s:Ge/Scorer404/Color = "red"
s:Ge/Scorer404/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_404/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_404/Quantity = "ProtonLET"
s:Sc/LET_404/Component = "Scorer404"
s:Sc/LET_404/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_404/OutputType = "csv"
s:Sc/LET_404/OutputFile = "./do_9spots/LET/40.4"

#Scoring Dose
s:Sc/Dose_404/Quantity = "DoseToWater"
s:Sc/Dose_404/Component = "Scorer404"
s:Sc/Dose_404/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_404/OutputType = "csv"
s:Sc/Dose_404/OutputFile = "./do_9spots/Dose/40.4"

### SCORER 40.5 mm ############################################################################################
#Define scorer position
d:Scorer405TransX = 0. cm
d:Scorer405TransY = 0. cm
d:Scorer405TransZ = Scorer0TransZ + 4.05 cm

#Define scorer
s:Ge/Scorer405/Type = "TsBox"
s:Ge/Scorer405/Parent = "SolidWater"
s:Ge/Scorer405/Material = "G4_WATER"
d:Ge/Scorer405/HLX = Scorer0HLX cm
d:Ge/Scorer405/HLY = Scorer0HLY cm
d:Ge/Scorer405/HLZ = Scorer0HLZ cm
d:Ge/Scorer405/TransX = Scorer0TransX cm
d:Ge/Scorer405/TransY = Scorer0TransY cm
d:Ge/Scorer405/TransZ = Scorer405TransZ cm
d:Ge/Scorer405/RotX = 0. deg
d:Ge/Scorer405/RotY = 0. deg
d:Ge/Scorer405/RotZ = 0. deg
s:Ge/Scorer405/Color = "red"
s:Ge/Scorer405/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_405/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_405/Quantity = "ProtonLET"
s:Sc/LET_405/Component = "Scorer405"
s:Sc/LET_405/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_405/OutputType = "csv"
s:Sc/LET_405/OutputFile = "./do_9spots/LET/40.5"

#Scoring Dose
s:Sc/Dose_405/Quantity = "DoseToWater"
s:Sc/Dose_405/Component = "Scorer405"
s:Sc/Dose_405/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_405/OutputType = "csv"
s:Sc/Dose_405/OutputFile = "./do_9spots/Dose/40.5"

### SCORER 41 mm ############################################################################################
#Define scorer position
d:Scorer41TransX = 0. cm
d:Scorer41TransY = 0. cm
d:Scorer41TransZ = Scorer0TransZ + 4.1 cm

#Define scorer
s:Ge/Scorer41/Type = "TsBox"
s:Ge/Scorer41/Parent = "SolidWater"
s:Ge/Scorer41/Material = "G4_WATER"
d:Ge/Scorer41/HLX = Scorer0HLX cm
d:Ge/Scorer41/HLY = Scorer0HLY cm
d:Ge/Scorer41/HLZ = Scorer0HLZ cm
d:Ge/Scorer41/TransX = Scorer0TransX cm
d:Ge/Scorer41/TransY = Scorer0TransY cm
d:Ge/Scorer41/TransZ = Scorer41TransZ cm
d:Ge/Scorer41/RotX = 0. deg
d:Ge/Scorer41/RotY = 0. deg
d:Ge/Scorer41/RotZ = 0. deg
s:Ge/Scorer41/Color = "red"
s:Ge/Scorer41/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_41/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_41/Quantity = "ProtonLET"
s:Sc/LET_41/Component = "Scorer41"
s:Sc/LET_41/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_41/OutputType = "csv"
s:Sc/LET_41/OutputFile = "./do_9spots/LET/41"

#Scoring Dose
s:Sc/Dose_41/Quantity = "DoseToWater"
s:Sc/Dose_41/Component = "Scorer41"
s:Sc/Dose_41/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_41/OutputType = "csv"
s:Sc/Dose_41/OutputFile = "./do_9spots/Dose/41"

### SCORER 41.5 mm ############################################################################################
#Define scorer position
d:Scorer415TransX = 0. cm
d:Scorer415TransY = 0. cm
d:Scorer415TransZ = Scorer0TransZ + 4.15 cm

#Define scorer
s:Ge/Scorer415/Type = "TsBox"
s:Ge/Scorer415/Parent = "SolidWater"
s:Ge/Scorer415/Material = "G4_WATER"
d:Ge/Scorer415/HLX = Scorer0HLX cm
d:Ge/Scorer415/HLY = Scorer0HLY cm
d:Ge/Scorer415/HLZ = Scorer0HLZ cm
d:Ge/Scorer415/TransX = Scorer0TransX cm
d:Ge/Scorer415/TransY = Scorer0TransY cm
d:Ge/Scorer415/TransZ = Scorer415TransZ cm
d:Ge/Scorer415/RotX = 0. deg
d:Ge/Scorer415/RotY = 0. deg
d:Ge/Scorer415/RotZ = 0. deg
s:Ge/Scorer415/Color = "red"
s:Ge/Scorer415/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_415/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_415/Quantity = "ProtonLET"
s:Sc/LET_415/Component = "Scorer415"
s:Sc/LET_415/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_415/OutputType = "csv"
s:Sc/LET_415/OutputFile = "./do_9spots/LET/41.5"

#Scoring Dose
s:Sc/Dose_415/Quantity = "DoseToWater"
s:Sc/Dose_415/Component = "Scorer415"
s:Sc/Dose_415/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_415/OutputType = "csv"
s:Sc/Dose_415/OutputFile = "./do_9spots/Dose/41.5"

### SCORER 42 mm ############################################################################################
#Define scorer position
d:Scorer42TransX = 0. cm
d:Scorer42TransY = 0. cm
d:Scorer42TransZ = Scorer0TransZ + 4.2 cm

#Define scorer
s:Ge/Scorer42/Type = "TsBox"
s:Ge/Scorer42/Parent = "SolidWater"
s:Ge/Scorer42/Material = "G4_WATER"
d:Ge/Scorer42/HLX = Scorer0HLX cm
d:Ge/Scorer42/HLY = Scorer0HLY cm
d:Ge/Scorer42/HLZ = Scorer0HLZ cm
d:Ge/Scorer42/TransX = Scorer0TransX cm
d:Ge/Scorer42/TransY = Scorer0TransY cm
d:Ge/Scorer42/TransZ = Scorer42TransZ cm
d:Ge/Scorer42/RotX = 0. deg
d:Ge/Scorer42/RotY = 0. deg
d:Ge/Scorer42/RotZ = 0. deg
s:Ge/Scorer42/Color = "red"
s:Ge/Scorer42/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_42/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_42/Quantity = "ProtonLET"
s:Sc/LET_42/Component = "Scorer42"
s:Sc/LET_42/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_42/OutputType = "csv"
s:Sc/LET_42/OutputFile = "./do_9spots/LET/42"

#Scoring Dose
s:Sc/Dose_42/Quantity = "DoseToWater"
s:Sc/Dose_42/Component = "Scorer42"
s:Sc/Dose_42/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_42/OutputType = "csv"
s:Sc/Dose_42/OutputFile = "./do_9spots/Dose/42"

### SCORER 42.5 mm ############################################################################################
#Define scorer position
d:Scorer425TransX = 0. cm
d:Scorer425TransY = 0. cm
d:Scorer425TransZ = Scorer0TransZ + 4.25 cm

#Define scorer
s:Ge/Scorer425/Type = "TsBox"
s:Ge/Scorer425/Parent = "SolidWater"
s:Ge/Scorer425/Material = "G4_WATER"
d:Ge/Scorer425/HLX = Scorer0HLX cm
d:Ge/Scorer425/HLY = Scorer0HLY cm
d:Ge/Scorer425/HLZ = Scorer0HLZ cm
d:Ge/Scorer425/TransX = Scorer0TransX cm
d:Ge/Scorer425/TransY = Scorer0TransY cm
d:Ge/Scorer425/TransZ = Scorer425TransZ cm
d:Ge/Scorer425/RotX = 0. deg
d:Ge/Scorer425/RotY = 0. deg
d:Ge/Scorer425/RotZ = 0. deg
s:Ge/Scorer425/Color = "red"
s:Ge/Scorer425/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_425/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_425/Quantity = "ProtonLET"
s:Sc/LET_425/Component = "Scorer425"
s:Sc/LET_425/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_425/OutputType = "csv"
s:Sc/LET_425/OutputFile = "./do_9spots/LET/42.5"

#Scoring Dose
s:Sc/Dose_425/Quantity = "DoseToWater"
s:Sc/Dose_425/Component = "Scorer425"
s:Sc/Dose_425/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_425/OutputType = "csv"
s:Sc/Dose_425/OutputFile = "./do_9spots/Dose/42.5"

### SCORER 43 mm ############################################################################################
#Define scorer position
d:Scorer43TransX = 0. cm
d:Scorer43TransY = 0. cm
d:Scorer43TransZ = Scorer0TransZ + 4.3 cm

#Define scorer
s:Ge/Scorer43/Type = "TsBox"
s:Ge/Scorer43/Parent = "SolidWater"
s:Ge/Scorer43/Material = "G4_WATER"
d:Ge/Scorer43/HLX = Scorer0HLX cm
d:Ge/Scorer43/HLY = Scorer0HLY cm
d:Ge/Scorer43/HLZ = Scorer0HLZ cm
d:Ge/Scorer43/TransX = Scorer0TransX cm
d:Ge/Scorer43/TransY = Scorer0TransY cm
d:Ge/Scorer43/TransZ = Scorer43TransZ cm
d:Ge/Scorer43/RotX = 0. deg
d:Ge/Scorer43/RotY = 0. deg
d:Ge/Scorer43/RotZ = 0. deg
s:Ge/Scorer43/Color = "red"
s:Ge/Scorer43/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_43/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_43/Quantity = "ProtonLET"
s:Sc/LET_43/Component = "Scorer43"
s:Sc/LET_43/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_43/OutputType = "csv"
s:Sc/LET_43/OutputFile = "./do_9spots/LET/43"

#Scoring Dose
s:Sc/Dose_43/Quantity = "DoseToWater"
s:Sc/Dose_43/Component = "Scorer43"
s:Sc/Dose_43/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_43/OutputType = "csv"
s:Sc/Dose_43/OutputFile = "./do_9spots/Dose/43"


### SCORER 44 mm ############################################################################################
#Define scorer position
d:Scorer44TransX = 0. cm
d:Scorer44TransY = 0. cm
d:Scorer44TransZ = Scorer0TransZ + 4.4 cm

#Define scorer
s:Ge/Scorer44/Type = "TsBox"
s:Ge/Scorer44/Parent = "SolidWater"
s:Ge/Scorer44/Material = "G4_WATER"
d:Ge/Scorer44/HLX = Scorer0HLX cm
d:Ge/Scorer44/HLY = Scorer0HLY cm
d:Ge/Scorer44/HLZ = Scorer0HLZ cm
d:Ge/Scorer44/TransX = Scorer0TransX cm
d:Ge/Scorer44/TransY = Scorer0TransY cm
d:Ge/Scorer44/TransZ = Scorer44TransZ cm
d:Ge/Scorer44/RotX = 0. deg
d:Ge/Scorer44/RotY = 0. deg
d:Ge/Scorer44/RotZ = 0. deg
s:Ge/Scorer44/Color = "red"
s:Ge/Scorer44/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_44/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_44/Quantity = "ProtonLET"
s:Sc/LET_44/Component = "Scorer44"
s:Sc/LET_44/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_44/OutputType = "csv"
s:Sc/LET_44/OutputFile = "./do_9spots/LET/44"

#Scoring Dose
s:Sc/Dose_44/Quantity = "DoseToWater"
s:Sc/Dose_44/Component = "Scorer44"
s:Sc/Dose_44/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_44/OutputType = "csv"
s:Sc/Dose_44/OutputFile = "./do_9spots/Dose/44"

### SCORER 45 mm ############################################################################################
#Define scorer position
d:Scorer45TransX = 0. cm
d:Scorer45TransY = 0. cm
d:Scorer45TransZ = Scorer0TransZ + 4.5 cm

#Define scorer
s:Ge/Scorer45/Type = "TsBox"
s:Ge/Scorer45/Parent = "SolidWater"
s:Ge/Scorer45/Material = "G4_WATER"
d:Ge/Scorer45/HLX = Scorer0HLX cm
d:Ge/Scorer45/HLY = Scorer0HLY cm
d:Ge/Scorer45/HLZ = Scorer0HLZ cm
d:Ge/Scorer45/TransX = Scorer0TransX cm
d:Ge/Scorer45/TransY = Scorer0TransY cm
d:Ge/Scorer45/TransZ = Scorer45TransZ cm
d:Ge/Scorer45/RotX = 0. deg
d:Ge/Scorer45/RotY = 0. deg
d:Ge/Scorer45/RotZ = 0. deg
s:Ge/Scorer45/Color = "red"
s:Ge/Scorer45/DrawingStyle = "Solid"

#Scoring Dose-averaged LET (LET_d)
d:Sc/LET_45/MaxScoredLET = 20 MeV/mm/(g/cm3)
s:Sc/LET_45/Quantity = "ProtonLET"
s:Sc/LET_45/Component = "Scorer45"
s:Sc/LET_45/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_45/OutputType = "csv"
s:Sc/LET_45/OutputFile = "./do_9spots/LET/45"

#Scoring Dose
s:Sc/Dose_45/Quantity = "DoseToWater"
s:Sc/Dose_45/Component = "Scorer45"
s:Sc/Dose_45/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_45/OutputType = "csv"
s:Sc/Dose_45/OutputFile = "./do_9spots/Dose/45"


#####################################################################################################################
############################################### BEAM DEFINITION #####################################################
#####################################################################################################################

### BEAM ITSELF #####################################################################################################
#Defining Beam 1
s:So/Beam1/Type                     = "Beam"
s:So/Beam1/Component                = "BeamPosition1"
s:So/Beam1/BeamParticle             = "proton"
d:So/Beam1/BeamEnergy               = 69.87 MeV
u:So/Beam1/BeamEnergySpread         = 1.1
s:So/Beam1/BeamPositionDistribution = "Flat"
s:So/Beam1/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam1/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam1/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam1/BeamAngularDistribution  = "Flat"
d:So/Beam1/BeamAngularCutoffX       = 0.5 deg
d:So/Beam1/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam1/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition1/Parent="ExitWindow"
s:Ge/BeamPosition1/Type="Group"
d:Ge/BeamPosition1/TransX= -0.8 cm
d:Ge/BeamPosition1/TransY= 0.8 cm
d:Ge/BeamPosition1/TransZ= -101.9 cm
d:Ge/BeamPosition1/RotX=0. deg
d:Ge/BeamPosition1/RotY=0. deg
d:Ge/BeamPosition1/RotZ=0. deg

#Defining Beam 2
s:So/Beam2/Type                     = "Beam"
s:So/Beam2/Component                = "BeamPosition2"
s:So/Beam2/BeamParticle             = "proton"
d:So/Beam2/BeamEnergy               = 69.87 MeV
u:So/Beam2/BeamEnergySpread         = 1.1
s:So/Beam2/BeamPositionDistribution = "Flat"
s:So/Beam2/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 1 * 1.40925 mm
d:So/Beam2/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam2/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam2/BeamAngularDistribution  = "Flat"
d:So/Beam2/BeamAngularCutoffX       = 0.5 deg
d:So/Beam2/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam2/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition2/Parent="ExitWindow"
s:Ge/BeamPosition2/Type="Group"
d:Ge/BeamPosition2/TransX= 0. cm
d:Ge/BeamPosition2/TransY= 0.8 cm
d:Ge/BeamPosition2/TransZ= -101.9 cm
d:Ge/BeamPosition2/RotX=0. deg
d:Ge/BeamPosition2/RotY=0. deg
d:Ge/BeamPosition2/RotZ=0. deg

#Defining Beam 3
s:So/Beam3/Type                     = "Beam"
s:So/Beam3/Component                = "BeamPosition3"
s:So/Beam3/BeamParticle             = "proton"
d:So/Beam3/BeamEnergy               = 69.87 MeV
u:So/Beam3/BeamEnergySpread         = 1.1
s:So/Beam3/BeamPositionDistribution = "Flat"
s:So/Beam3/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 1 * 1.40925 mm
d:So/Beam3/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam3/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam3/BeamAngularDistribution  = "Flat"
d:So/Beam3/BeamAngularCutoffX       = 0.5 deg
d:So/Beam3/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam3/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition3/Parent="ExitWindow"
s:Ge/BeamPosition3/Type="Group"
d:Ge/BeamPosition3/TransX= 0.8 cm
d:Ge/BeamPosition3/TransY= 0.8 cm
d:Ge/BeamPosition3/TransZ= -101.9 cm
d:Ge/BeamPosition3/RotX=0. deg
d:Ge/BeamPosition3/RotY=0. deg
d:Ge/BeamPosition3/RotZ=0. deg

#Defining Beam 4
s:So/Beam4/Type                     = "Beam"
s:So/Beam4/Component                = "BeamPosition4"
s:So/Beam4/BeamParticle             = "proton"
d:So/Beam4/BeamEnergy               = 69.87 MeV
u:So/Beam4/BeamEnergySpread         = 1.1
s:So/Beam4/BeamPositionDistribution = "Flat"
s:So/Beam4/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam4/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam4/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam4/BeamAngularDistribution  = "Flat"
d:So/Beam4/BeamAngularCutoffX       = 0.5 deg
d:So/Beam4/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam4/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition4/Parent="ExitWindow"
s:Ge/BeamPosition4/Type="Group"
d:Ge/BeamPosition4/TransX= -0.8 cm
d:Ge/BeamPosition4/TransY= 0 cm
d:Ge/BeamPosition4/TransZ= -101.9 cm
d:Ge/BeamPosition4/RotX=0. deg
d:Ge/BeamPosition4/RotY=0. deg
d:Ge/BeamPosition4/RotZ=0. deg

#Defining Beam 5
s:So/Beam5/Type                     = "Beam"
s:So/Beam5/Component                = "BeamPosition5"
s:So/Beam5/BeamParticle             = "proton"
d:So/Beam5/BeamEnergy               = 69.87 MeV
u:So/Beam5/BeamEnergySpread         = 1.1
s:So/Beam5/BeamPositionDistribution = "Flat"
s:So/Beam5/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 1 * 1.40925 mm
d:So/Beam5/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam5/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam5/BeamAngularDistribution  = "Flat"
d:So/Beam5/BeamAngularCutoffX       = 0.5 deg
d:So/Beam5/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam5/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition5/Parent="ExitWindow"
s:Ge/BeamPosition5/Type="Group"
d:Ge/BeamPosition5/TransX= 0. cm
d:Ge/BeamPosition5/TransY= 0 cm
d:Ge/BeamPosition5/TransZ= -101.9 cm
d:Ge/BeamPosition5/RotX=0. deg
d:Ge/BeamPosition5/RotY=0. deg
d:Ge/BeamPosition5/RotZ=0. deg

#Defining Beam 6
s:So/Beam6/Type                     = "Beam"
s:So/Beam6/Component                = "BeamPosition6"
s:So/Beam6/BeamParticle             = "proton"
d:So/Beam6/BeamEnergy               = 69.87 MeV
u:So/Beam6/BeamEnergySpread         = 1.1
s:So/Beam6/BeamPositionDistribution = "Flat"
s:So/Beam6/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 1 * 1.40925 mm
d:So/Beam6/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam6/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam6/BeamAngularDistribution  = "Flat"
d:So/Beam6/BeamAngularCutoffX       = 0.5 deg
d:So/Beam6/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam6/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition6/Parent="ExitWindow"
s:Ge/BeamPosition6/Type="Group"
d:Ge/BeamPosition6/TransX= 0.8 cm
d:Ge/BeamPosition6/TransY= 0 cm
d:Ge/BeamPosition6/TransZ= -101.9 cm
d:Ge/BeamPosition6/RotX=0. deg
d:Ge/BeamPosition6/RotY=0. deg
d:Ge/BeamPosition6/RotZ=0. deg

#Defining Beam 7
s:So/Beam7/Type                     = "Beam"
s:So/Beam7/Component                = "BeamPosition7"
s:So/Beam7/BeamParticle             = "proton"
d:So/Beam7/BeamEnergy               = 69.87 MeV
u:So/Beam7/BeamEnergySpread         = 1.1
s:So/Beam7/BeamPositionDistribution = "Flat"
s:So/Beam7/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam7/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam7/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam7/BeamAngularDistribution  = "Flat"
d:So/Beam7/BeamAngularCutoffX       = 0.5 deg
d:So/Beam7/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam7/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition7/Parent="ExitWindow"
s:Ge/BeamPosition7/Type="Group"
d:Ge/BeamPosition7/TransX= -0.8 cm
d:Ge/BeamPosition7/TransY= -0.8 cm
d:Ge/BeamPosition7/TransZ= -101.9 cm
d:Ge/BeamPosition7/RotX=0. deg
d:Ge/BeamPosition7/RotY=0. deg
d:Ge/BeamPosition7/RotZ=0. deg

#Defining Beam 8
s:So/Beam8/Type                     = "Beam"
s:So/Beam8/Component                = "BeamPosition8"
s:So/Beam8/BeamParticle             = "proton"
d:So/Beam8/BeamEnergy               = 69.87 MeV
u:So/Beam8/BeamEnergySpread         = 1.1
s:So/Beam8/BeamPositionDistribution = "Flat"
s:So/Beam8/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam8/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam8/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam8/BeamAngularDistribution  = "Flat"
d:So/Beam8/BeamAngularCutoffX       = 0.5 deg
d:So/Beam8/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam8/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition8/Parent="ExitWindow"
s:Ge/BeamPosition8/Type="Group"
d:Ge/BeamPosition8/TransX= 0. cm
d:Ge/BeamPosition8/TransY= -0.8 cm
d:Ge/BeamPosition8/TransZ= -101.9 cm
d:Ge/BeamPosition8/RotX=0. deg
d:Ge/BeamPosition8/RotY=0. deg
d:Ge/BeamPosition8/RotZ=0. deg

#Defining Beam 9
s:So/Beam9/Type                     = "Beam"
s:So/Beam9/Component                = "BeamPosition9"
s:So/Beam9/BeamParticle             = "proton"
d:So/Beam9/BeamEnergy               = 69.87 MeV
u:So/Beam9/BeamEnergySpread         = 1.1
s:So/Beam9/BeamPositionDistribution = "Flat"
s:So/Beam9/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam9/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam9/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam9/BeamAngularDistribution  = "Flat"
d:So/Beam9/BeamAngularCutoffX       = 0.5 deg
d:So/Beam9/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam9/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition9/Parent="ExitWindow"
s:Ge/BeamPosition9/Type="Group"
d:Ge/BeamPosition9/TransX= 0.8 cm
d:Ge/BeamPosition9/TransY= -0.8 cm
d:Ge/BeamPosition9/TransZ= -101.9 cm
d:Ge/BeamPosition9/RotX=0. deg
d:Ge/BeamPosition9/RotY=0. deg
d:Ge/BeamPosition9/RotZ=0. deg



#####################################################################################################################
################################################### GRAPHICAL OUTPUT ################################################
#####################################################################################################################
#s:Gr/ViewA/Type             = "OpenGL"
#i:Gr/ViewA/WindowSizeX      = 1024
#i:Gr/ViewA/WindowSizeY      = 768
#b:Gr/ViewA/IncludeAxes      = "True"
#u:Gr/ViewA/Zoom             = 2.
#s:Gr/ViewA/CenterOn = "World"
#s:Gr/ViewA/Projection       = "Orthogonal"
#d:Gr/ViewA/AxesSize         = 10 cm
#Ts/UseQt = "True"

i:Ts/NumberOfThreads = 1

 
#Physics List

sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"

b:Ts/PauseBeforeQuit = "True"
