#####################################################################################################################
######################################### DEFINITIONS THAT DEFINE SIMULATION ########################################
#####################################################################################################################

#Number of particles to simulate CAN CHANGE THIS
i:NrHistories = 10000

#Amount of solid water added to setup on top of nozzle CAN CHANGE THIS
d:SolidWaterAdded = 7 mm

#Number of histories for MONAS solid statistics
i:NrStatEvents = 1



#####################################################################################################################
####################################### SOME FIXED PARAMETERS FOR THE SETUP #########################################
#####################################################################################################################

#Snout position (Matching RayStation), which is distance from the top of the grey box to iso KEEP CONSTANT
d:SnoutPosition = 8.06 cm

#Height of nozzle, from measurement KEEP CONSTANT
d:GreyBoxHeight = 8.7 cm

#Position of the top of the nozzle under iso, derived from snout position and nozzle height
d:Top_of_GreyBox = 0 cm - SnoutPosition
d:Top_of_Window = Top_of_GreyBox - GreyBoxHeight cm
#Top of exit window is 23.4 cm under the top of the nozzle (Matilde info from Varian)
d:Top_of_BeamExit = Top_of_GreyBox - 23.4 cm





#####################################################################################################################
############################################### SETUP GEOMETRY DEFINITION ###########################################
#####################################################################################################################

### WORLD DEFINITION ###########################################################################################
#Define world size (in cm)
d:WorldHLX = 25.0 cm
d:WorldHLY = 25.0 cm
d:WorldHLZ = 150.0 cm

#Define World
s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX       = WorldHLX cm
d:Ge/World/HLY       = WorldHLY cm
d:Ge/World/HLZ       = WorldHLZ cm
b:Ge/World/Invisible = "False"



### SOLID WATER PLATE ON WHICH THE FLASK STANDS #################################################################
#Define solid water plate dimension
#It's 10 mm thick, so HLZ = 5 mm
d:SolidWater10HLX = WorldHLX cm
d:SolidWater10HLY = WorldHLY cm
d:SolidWater10HLZ = 5 mm

#Define solid water plate position
#Its top is aligned with the isocentre
d:SolidWater10TransX = 0. cm
d:SolidWater10TransY = 0. cm
d:SolidWater10TransZ = 0 cm - SolidWater10HLZ

#Define solid water plate
s:Ge/SolidWater10/Type = "TsBox"
s:Ge/SolidWater10/Parent = "World"
s:Ge/SolidWater10/Material = "Lexan"
d:Ge/SolidWater10/HLX = SolidWater10HLX cm
d:Ge/SolidWater10/HLY = SolidWater10HLY cm
d:Ge/SolidWater10/HLZ = SolidWater10HLZ cm
d:Ge/SolidWater10/TransX = SolidWater10TransX cm
d:Ge/SolidWater10/TransY = SolidWater10TransY cm
d:Ge/SolidWater10/TransZ = SolidWater10TransZ cm
d:Ge/SolidWater10/RotX = 0. deg
d:Ge/SolidWater10/RotY = 0. deg
d:Ge/SolidWater10/RotZ = 0. deg
s:Ge/SolidWater10/Color = "white"
s:Ge/SolidWater10/DrawingStyle = "Solid"



### AIR GAP UNDER CELL FLASK #######################################################################################
#Define dimensions
#Dimensions copied from Judith's simulations of Anne-Marit's setup
d:AirUnderFlaskHLX = WorldHLX cm
d:AirUnderFlaskHLY = WorldHLY cm
d:AirUnderFlaskHLZ = 0.05 cm

#Define position
d:AirUnderFlaskTransX = 0. cm 
d:AirUnderFlaskTransY = 0. cm
d:AirUnderFlaskTransZ = 0 cm + AirUnderFlaskHLZ

#Define air gap
s:Ge/AirUnderFlask/Type = "TsBox"
s:Ge/AirUnderFlask/Parent = "World"
s:Ge/AirUnderFlask/Material = "G4_AIR"
d:Ge/AirUnderFlask/HLX = AirUnderFlaskHLX cm
d:Ge/AirUnderFlask/HLY = AirUnderFlaskHLY cm
d:Ge/AirUnderFlask/HLZ = AirUnderFlaskHLZ cm
d:Ge/AirUnderFlask/TransX = AirUnderFlaskTransX cm
d:Ge/AirUnderFlask/TransY = AirUnderFlaskTransY cm
d:Ge/AirUnderFlask/TransZ = AirUnderFlaskTransZ cm
d:Ge/AirUnderFlask/RotX = 0. deg
d:Ge/AirUnderFlask/RotY = 0. deg
d:Ge/AirUnderFlask/RotZ = 0. deg
s:Ge/AirUnderFlask/Color = "blue"



### CELL FLASK BOTTOM ###############################################################################################
#Define cell flask material --> taken from Judith's simulations of Anne-Marit's setup 
sv:Ma/Polystyrene/Components = 2 "Hydrogen" "Carbon"
uv:Ma/Polystyrene/Fractions = 2 0.5 0.5
d:Ma/Polystyrene/Density = 1.05 g/cm3
s:Ma/Polystyrene/DefaultColor = "Skyblue"

#Define cell flask bottom dimensions --> taken from Judith's simulations of Anne-Marit's setup
d:CellflaskBottomHLX = WorldHLX cm
d:CellflaskBottomHLY = WorldHLY cm
d:CellflaskBottomHLZ = 0.06185 cm

#Define cell flask bottom position
d:CellflaskBottomTransX = 0. cm 
d:CellflaskBottomTransY = 0. cm
d:Underside_flask = AirUnderFlaskTransZ + AirUnderFlaskHLZ cm 
d:CellflaskBottomTransZ = Underside_Flask + CellflaskBottomHLZ cm

#Define cell flask bottom
s:Ge/CellflaskBottom/Type     = "TsBox"
s:Ge/CellflaskBottom/Parent   = "World"
s:Ge/CellflaskBottom/Material = "Polystyrene"
d:Ge/CellflaskBottom/HLX      = CellflaskBottomHLX cm
d:Ge/CellflaskBottom/HLY      = CellflaskBottomHLY cm
d:Ge/CellflaskBottom/HLZ      = CellflaskBottomHLZ cm
d:Ge/CellflaskBottom/TransX   = CellflaskBottomTransX cm
d:Ge/CellflaskBottom/TransY   = CellflaskBottomTransY cm
d:Ge/CellflaskBottom/TransZ   = CellflaskBottomTransZ cm
d:Ge/CellflaskBottom/RotX     = 0. deg
d:Ge/CellflaskBottom/RotY     = 0. deg
d:Ge/CellflaskBottom/RotZ     = 0. deg
s:Ge/CellflaskBottom/Color    = "Lightblue"
s:Ge/CellflaskBottom/DrawingStyle = "Solid"



### SOLID WATER ADDED ON TOP OF NOZZLE ##############################################################################
#Define dimensions
d:SolidWaterHLX = 12.5 cm
d:SolidWaterHLY = 12.5 cm
d:SolidWaterHLZ = 0.5 * SolidWaterAdded cm

#Define solid water plate position
#Its bottom is on the top of the grey box
d:SolidWaterTransX = 0. cm
d:SolidWaterTransY = 0. cm
d:SolidWaterTransZ = Top_of_GreyBox + SolidWaterHLZ cm

#Define solid water plate
s:Ge/SolidWater/Type = "TsBox"
s:Ge/SolidWater/Parent = "World"
s:Ge/SolidWater/Material = "Lexan"
d:Ge/SolidWater/HLX = SolidWaterHLX cm
d:Ge/SolidWater/HLY = SolidWaterHLY cm
d:Ge/SolidWater/HLZ = SolidWaterHLZ cm
d:Ge/SolidWater/TransX = SolidWaterTransX cm
d:Ge/SolidWater/TransY = SolidWaterTransY cm
d:Ge/SolidWater/TransZ = SolidWaterTransZ cm
d:Ge/SolidWater/RotX = 0. deg
d:Ge/SolidWater/RotY = 0. deg
d:Ge/SolidWater/RotZ = 0. deg
s:Ge/SolidWater/Color = "yellow"
s:Ge/SolidWater/DrawingStyle = "Solid"



### AIR BETWEEN ADDED SOLID WATER AND 10 MM PLATE ###################################################################
#Define dimensions 
d:AirGapWaterPlatesHLX = 12.5 cm
d:AirGapWaterPlatesHLY = 12.5 cm
#Must fill the gap between the fixed 10 mm plate and the added plates
d:Bottom_10Plate = SolidWater10TransZ - SolidWater10HLZ cm
d:Top_AddedPlate = SolidWaterTransZ + SolidWaterHLZ cm
d:Height_of_airgap = Bottom_10Plate - Top_AddedPlate cm
d:AirGapWaterPlatesHLZ = 0.5 * Height_of_airgap cm

#Define position
#This air gap is positioned on the top of the added solid water plates
d:AirGapWaterPlatesTransX = 0. cm
d:AirGapWaterPlatesTransY = 0. cm
d:AirGapWaterPlatesTransZ = Top_AddedPlate + AirGapWaterPlatesHLZ cm

#Define air gap between range shifter and top of nozzle
s:Ge/AirGapWaterPlates/Type     = "TsBox"
s:Ge/AirGapWaterPlates/Material = "G4_AIR"
s:Ge/AirGapWaterPlates/Parent   = "World"
d:Ge/AirGapWaterPlates/HLX      = AirGapWaterPlatesHLX cm
d:Ge/AirGapWaterPlates/HLY      = AirGapWaterPlatesHLY cm
d:Ge/AirGapWaterPlates/HLZ      = AirGapWaterPlatesHLZ cm
d:Ge/AirGapWaterPlates/TransX   = AirGapWaterPlatesTransX cm
d:Ge/AirGapWaterPlates/TransY   = AirGapWaterPlatesTransY cm
d:Ge/AirGapWaterPlates/TransZ   = AirGapWaterPlatesTransZ cm
d:Ge/AirGapWaterPlates/RotX     = 0. deg
d:Ge/AirGapWaterPlates/RotY     = 0. deg
d:Ge/AirGapWaterPlates/RotZ     = 0. deg
s:Ge/AirGapWaterPlates/Color    = "blue"



### AIR GAP BETWEEN WINDOW AND RANGE SHIFTER ###################################################################
#Define dimensions 
d:AirGapWindowRangeHLX = 12.5 cm
d:AirGapWindowRangeHLY = 12.5 cm
d:AirGapWindowRangeHLZ = 2.0 cm

#Define position
#This air gap is positioned on the top of the window
d:AirGapWindowRangeTransX = 0. cm
d:AirGapWindowRangeTransY = 0. cm
d:AirGapWindowRangeTransZ = Top_of_Window + AirGapWindowRangeHLZ cm

#Define air gap between exit window and range shifter
s:Ge/AirGapWindowRange/Type     = "TsBox"
s:Ge/AirGapWindowRange/Material = "G4_AIR"
s:Ge/AirGapWindowRange/Parent   = "World"
d:Ge/AirGapWindowRange/HLX      = AirGapWindowRangeHLX cm
d:Ge/AirGapWindowRange/HLY      = AirGapWindowRangeHLY cm
d:Ge/AirGapWindowRange/HLZ      = AirGapWindowRangeHLZ cm
d:Ge/AirGapWindowRange/TransX   = AirGapWindowRangeTransX cm
d:Ge/AirGapWindowRange/TransY   = AirGapWindowRangeTransY cm
d:Ge/AirGapWindowRange/TransZ   = AirGapWindowRangeTransZ cm
d:Ge/AirGapWindowRange/RotX     = 0. deg
d:Ge/AirGapWindowRange/RotY     = 0. deg
d:Ge/AirGapWindowRange/RotZ     = 0. deg
s:Ge/AirGapWindowRange/Color    = "blue"



### RANGE SHIFTER ###################################################################################################
#Define dimensions
d:RangeShifterHLX = 12.5 cm
d:RangeShifterHLY = 12.5 cm
d:RangeShifterHLZ = 1.0 cm

#Define Position
d:RangeShifterTransX = 0. cm
d:RangeShifterTransY = 0. cm
d:Bottom_of_Range = AirGapWindowRangeTransZ + AirGapWindowRangeHLZ cm
d:RangeShifterTransZ = Bottom_of_Range + RangeShifterHLZ cm

#Define RangeShifter
s:Ge/RangeShifter/Type     = "TsBox"
s:Ge/RangeShifter/Material = "Lexan"
s:Ge/RangeShifter/Parent   = "World"
d:Ge/RangeShifter/HLX      = RangeShifterHLX cm
d:Ge/RangeShifter/HLY      = RangeShifterHLY cm
d:Ge/RangeShifter/HLZ      = RangeShifterHLZ cm
d:Ge/RangeShifter/TransX   = RangeShifterTransX cm
d:Ge/RangeShifter/TransY   = RangeShifterTransY cm
d:Ge/RangeShifter/TransZ   = RangeShifterTransZ cm
d:Ge/RangeShifter/RotX     = 0. deg 
d:Ge/RangeShifter/RotY     = 0. deg
d:Ge/RangeShifter/RotZ     = 0. deg
s:Ge/RangeShifter/Color    = "pink"
s:Ge/RangeShifter/DrawingStyle = "Solid"



### AIR GAP BETWEEN RANGE SHIFTER AND TOP OF NOZZLE #################################################################
#Define dimensions 
d:AirGapRangeTopHLX = 12.5 cm 
d:AirGapRangeTopHLY = 12.5 cm
#Must fill the gap between the range shifter and the top of the nozzle
d:Top_of_Range = RangeShifterTransZ + RangeShifterHLZ cm
d:AirGap_height = Top_of_GreyBox - Top_of_Range cm
d:AirGapRangeTopHLZ = 0.5 * AirGap_height cm

#Define position
#This air gap is positioned on the top of the range shifter
d:AirGapRangeTopTransX = 0. cm
d:AirGapRangeTopTransY = 0. cm
d:AirGapRangeTopTransZ = Top_of_Range + AirGapRangeTopHLZ cm

#Define air gap between range shifter and top of nozzle
s:Ge/AirGapRangeTop/Type     = "TsBox"
s:Ge/AirGapRangeTop/Material = "G4_AIR"
s:Ge/AirGapRangeTop/Parent   = "World"
d:Ge/AirGapRangeTop/HLX      = AirGapRangeTopHLX cm
d:Ge/AirGapRangeTop/HLY      = AirGapRangeTopHLY cm
d:Ge/AirGapRangeTop/HLZ      = AirGapRangeTopHLZ cm
d:Ge/AirGapRangeTop/TransX   = AirGapRangeTopTransX cm
d:Ge/AirGapRangeTop/TransY   = AirGapRangeTopTransY cm
d:Ge/AirGapRangeTop/TransZ   = AirGapRangeTopTransZ cm
d:Ge/AirGapRangeTop/RotX     = 0. deg
d:Ge/AirGapRangeTop/RotY     = 0. deg
d:Ge/AirGapRangeTop/RotZ     = 0. deg
s:Ge/AirGapRangeTop/Color    = "blue"



### WINDOW #####################################################################################################
#Define dimensions 
d:WindowHLX = 12.5 cm
d:WindowHLY = 12.5 cm
#Set arbitrarily for now: may find out more from Varian
d:WindowHLZ = 0.05 cm

#Define position
#Top of exit window is SnoutPosition and height of nozzle under the isocentre
d:WindowTransX = 0. cm
d:WindowTransY = 0. cm
d:WindowTransZ = Top_of_Window - WindowHLZ cm

#Define Window
s:Ge/Window/Type     = "TsBox"
s:Ge/Window/Material = "G4_AIR"
s:Ge/Window/Parent   = "World"
d:Ge/Window/HLX      = WindowHLX cm
d:Ge/Window/HLY      = WindowHLY cm
d:Ge/Window/HLZ      = WindowHLZ cm
d:Ge/Window/TransX   = WindowTransX cm
d:Ge/Window/TransY   = WindowTransY cm
d:Ge/Window/TransZ   = WindowTransZ cm
d:Ge/Window/RotX     = 0. deg
d:Ge/Window/RotY     = 0. deg
d:Ge/Window/RotZ     = 0. deg
s:Ge/Window/Color    = "grey"
s:Ge/Window/DrawingStyle = "Solid"



### EXIT WINDOW #####################################################################################################
#Define dimensions 
d:ExitWindowHLX = 12.5 cm
d:ExitWindowHLY = 12.5 cm
d:ExitWindowHLZ = 0.5 cm

#Define position
d:ExitWindowTransX = 0. cm
d:ExitWindowTransY = 0. cm
d:ExitWindowTransZ = Top_of_BeamExit - ExitWindowHLZ cm

#Define ExitWindow
s:Ge/ExitWindow/Type     = "TsBox"
s:Ge/ExitWindow/Material = "G4_AIR"
s:Ge/ExitWindow/Parent   = "World"
d:Ge/ExitWindow/HLX      = ExitWindowHLX cm
d:Ge/ExitWindow/HLY      = ExitWindowHLY cm
d:Ge/ExitWindow/HLZ      = ExitWindowHLZ cm
d:Ge/ExitWindow/TransX   = ExitWindowTransX cm
d:Ge/ExitWindow/TransY   = ExitWindowTransY cm
d:Ge/ExitWindow/TransZ   = ExitWindowTransZ cm
d:Ge/ExitWindow/RotX     = 0. deg
d:Ge/ExitWindow/RotY     = 0. deg
d:Ge/ExitWindow/RotZ     = 0. deg
s:Ge/ExitWindow/Color    = "grey"
s:Ge/ExitWindow/DrawingStyle = "Solid"



### AIR GAP BETWEEN EXIT WINDOW AND WINDOW ##########################################################################
#Because the exit window is where the vacuum ends

#Define dimensions, spans between exit window and window
d:AirGapWindowsHLX = 12.5 cm
d:AirGapWindowsHLY = 12.5 cm
d:Bottom_of_window = WindowTransZ - WindowHLZ cm
d:AirGap_windows_height = Bottom_of_window - Top_of_BeamExit cm
d:AirGapWindowsHLZ = 0.5 * AirGap_windows_height cm

#Define position, spans between exit window and window
d:AirGapWindowsTransX = 0. cm
d:AirGapWindowsTransY = 0. cm
d:AirGapWindowsTransZ = Top_of_BeamExit + AirGapWindowsHLZ cm

#Define air gap between range shifter and top of nozzle
s:Ge/AirGapWindows/Type     = "TsBox"
s:Ge/AirGapWindows/Material = "G4_AIR"
s:Ge/AirGapWindows/Parent   = "World"
d:Ge/AirGapWindows/HLX      = AirGapWindowsHLX cm
d:Ge/AirGapWindows/HLY      = AirGapWindowsHLY cm
d:Ge/AirGapWindows/HLZ      = AirGapWindowsHLZ cm
d:Ge/AirGapWindows/TransX   = AirGapWindowsTransX cm
d:Ge/AirGapWindows/TransY   = AirGapWindowsTransY cm
d:Ge/AirGapWindows/TransZ   = AirGapWindowsTransZ cm
d:Ge/AirGapWindows/RotX     = 0. deg
d:Ge/AirGapWindows/RotY     = 0. deg
d:Ge/AirGapWindows/RotZ     = 0. deg
s:Ge/AirGapWindows/Color    = "blue"



#####################################################################################################################
################################################# OUTPUT DEFINITIONS ################################################
#####################################################################################################################

### SCORER AT CELL LAYER ############################################################################################
#Define scorer dimension
d:ScorerCellLayerHLX = WorldHLX cm
d:ScorerCellLayerHLY = WorldHLY cm
d:ScorerCellLayerHLZ = Ge/TEgasSV/Rmax mm

#Define scorer position
d:ScorerCellLayerTransX = 0. cm
d:ScorerCellLayerTransY = 0. cm
#Scorer will be on top of the cell flask bottom
d:Top_of_flask_bottom = CellFlaskBottomTransZ + CellFlaskBottomHLZ cm
d:ScorerCellLayerTransZ = Top_of_flask_bottom + ScorerCellLayerHLZ cm

#Define scorer
s:Ge/ScorerCellLayer/Type = "TsBox"
s:Ge/ScorerCellLayer/Parent = "World"
s:Ge/ScorerCellLayer/Material = "G4_WATER"
d:Ge/ScorerCellLayer/HLX = ScorerCellLayerHLX cm
d:Ge/ScorerCellLayer/HLY = ScorerCellLayerHLY cm
d:Ge/ScorerCellLayer/HLZ = ScorerCellLayerHLZ cm
d:Ge/ScorerCellLayer/TransX = ScorerCellLayerTransX cm
d:Ge/ScorerCellLayer/TransY = ScorerCellLayerTransY cm
d:Ge/ScorerCellLayer/TransZ = ScorerCellLayerTransZ cm
d:Ge/ScorerCellLayer/RotX = 0. deg
d:Ge/ScorerCellLayer/RotY = 0. deg
d:Ge/ScorerCellLayer/RotZ = 0. deg
s:Ge/ScorerCellLayer/Color = "red"
s:Ge/ScorerCellLayer/DrawingStyle = "Solid"

### MONAS SCORER #########################################################################################################

sv:Ma/TEgas/Components = 4 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" 
uv:Ma/TEgas/Fractions = 4 0.1 0.558 0.054 0.288
d:Ma/TEgas/Density = 0.2126 mg/cm3 

s:Ge/TEgasSV/Parent   = "ScorerCellLayer"
s:Ge/TEgasSV/Type     = "TsSphere"
s:Ge/TEgasSV/Material = "TEgas"
d:Ge/TEgasSV/RMin     = 0. mm
d:Ge/TEgasSV/RMax     = 1.0 mm
d:Ge/TEgasSV/SPhi     = 0. deg
d:Ge/TEgasSV/DPhi     = 360. deg
d:Ge/TEgasSV/STheta   = 0. deg
d:Ge/TEgasSV/DTheta   = 180. deg
d:Ge/TEgasSV/TransX   = 0. mm
d:Ge/TEgasSV/TransY   = 0. mm
d:Ge/TEgasSV/TransZ   = 0. mm
d:Ge/TEgasSV/RotX     = 0. deg
d:Ge/TEgasSV/RotY     = 0. deg
d:Ge/TEgasSV/RotZ     = 0. deg
#s:Ge/TEgasSV/AssignToRegionNamed = "MyRegion"
d:Ge/TEgasSV/MaxStepSize = 0.1 mm 

#Scoring Dose-averaged LET (LET_d) and Dose for the microdosimeter
s:Sc/LET_SV/Quantity = "ProtonLET"
s:Sc/LET_SV/Component = "TEgasSV"
s:Sc/LET_SV/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/LET_SV/OutputType = "csv"
s:Sc/LET_SV/OutputFile = "./OUTPUTS_MONAS/LET_MONASScorer"

#Scoring Dose
s:Sc/Dose_SV/Quantity = "DoseToWater"
s:Sc/Dose_SV/Component = "TEgasSV"
s:Sc/Dose_SV/IfOutputFileAlreadyExists             = "Overwrite"
s:Sc/Dose_SV/OutputType = "csv"
s:Sc/Dose_SV/OutputFile = "./OUTPUTS_MONAS/Dose_MONASScorer"


#MONAS scoring
s:Sc/Scorer/Quantity    = "TsYScorer"
s:Sc/Scorer/Component   = "TEgasSV"

# Mandatory parameters
i:Sc/Scorer/NumberOfHistoriesInRun    = NrHistories
i:Sc/Scorer/GeometryNumber            = 0
d:Sc/Scorer/SensitiveVolumeRadius     = 1.0 mm      # radius of sensitive volume (except for silicon microdosimeter)
d:Sc/Scorer/TissueEquivalentRadius    = 1.5 um      # radius of equivalent size of tissue equivalent volume (to calculate mean chord length)
#d:Sc/Scorer/MeanPathLength           = 10 um        # Mean path length for SOI detector 
d:Sc/Scorer/TransX                    = 0 mm         # x position of sensitive volume from world center
d:Sc/Scorer/TransY                    = 0 mm         # y position of sensitive volume from world center
d:Sc/Scorer/TransZ                    = ScorerCellLayerTransZ + ScorerCellLayerHLZ mm     # y position of sensitive volume from world center
s:Sc/Scorer/OutputType                = "ASCII"       # OutputType must be ASCII, Binary or ROOT (unit: keV/um)
s:Sc/Scorer/IfOutputFileAlreadyExists = "Overwrite" 
s:Sc/Scorer/OutputFile = "./OUTPUTS_MONAS/MONASScorer"

# Optional parameters
u:Sc/Scorer/LinealEnergyLowerlimit      = 0.1         # in unit of keV/um
u:Sc/Scorer/LinealEnergyUpperlimit     = 1000        # in unit of keV/um
b:Sc/Scorer/IncludeFrequencyMeanLinealEnergy   = "False"
b:Sc/Scorer/IncludeDoseMeanLinealEnergy   = "False"
u:Sc/Scorer/PileupProbability = 0.0
b:Sc/Scorer/GetStatisticInfo =  "False"
i:Sc/Scorer/SpectrumUpdateTimes = NrHistories
b:Sc/Scorer/SaveSpecificEnergySpecra = "False"

## MONAS PARAMETERS
#MKM
b:Sc/Scorer/GetRBEWithMKModel = "True"
sv:Sc/Scorer/MKMCalculation = 2 "SaturationCorrection" "SMKM"
u:Sc/Scorer/MKModel_alpha0 = 0.19
u:Sc/Scorer/MKModel_beta = 0.07
u:Sc/Scorer/MKModel_betaX = 0.05 #HSG 200 kV Kase et al. 2006
u:Sc/Scorer/MKModel_alphaX = 0.19 #HSG 200 kV Kase et al. 2006
u:Sc/Scorer/MKModel_DomainRadius = 0.44
u:Sc/Scorer/MKModel_NucleusRadius = 8.0
u:Sc/Scorer/MKModel_y0 = 150
u:Sc/Scorer/SetMultieventStatistic = NrStatEvents

#GSM2
b:Sc/Scorer/GetRBEWithGSM2 = "False"
u:Sc/Scorer/GSM2_DomainRadius = 0.8
u:Sc/Scorer/GSM2_NucleusRadius = 5.0
u:Sc/Scorer/GSM2_a = 0.037
u:Sc/Scorer/GSM2_b = 0.182
u:Sc/Scorer/GSM2_r = 3.641
u:Sc/Scorer/GSM2_alphaX = 0.19 #HSG 200 kV
u:Sc/Scorer/GSM2_betaX = 0.05 #HSG 200 kV

uv:Sc/Scorer/SurvivalDoses = 3 2 8 3



#####################################################################################################################
############################################### BEAM DEFINITION #####################################################
#####################################################################################################################

### BEAM ITSELF #####################################################################################################
#Defining Beam 1
s:So/Beam1/Type                     = "Beam"
s:So/Beam1/Component                = "BeamPosition1"
s:So/Beam1/BeamParticle             = "proton"
d:So/Beam1/BeamEnergy               = 69.87 MeV
u:So/Beam1/BeamEnergySpread         = 1.1
s:So/Beam1/BeamPositionDistribution = "Flat"
s:So/Beam1/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam1/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam1/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam1/BeamAngularDistribution  = "Flat"
d:So/Beam1/BeamAngularCutoffX       = 0.5 deg
d:So/Beam1/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam1/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition1/Parent="ExitWindow"
s:Ge/BeamPosition1/Type="Group"
d:Ge/BeamPosition1/TransX= -0.8 cm
d:Ge/BeamPosition1/TransY= 0.8 cm
d:Ge/BeamPosition1/TransZ= -101.9 cm
d:Ge/BeamPosition1/RotX=0. deg
d:Ge/BeamPosition1/RotY=0. deg
d:Ge/BeamPosition1/RotZ=0. deg

#Defining Beam 2
s:So/Beam2/Type                     = "Beam"
s:So/Beam2/Component                = "BeamPosition2"
s:So/Beam2/BeamParticle             = "proton"
d:So/Beam2/BeamEnergy               = 69.87 MeV
u:So/Beam2/BeamEnergySpread         = 1.1
s:So/Beam2/BeamPositionDistribution = "Flat"
s:So/Beam2/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 1 * 1.40925 mm
d:So/Beam2/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam2/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam2/BeamAngularDistribution  = "Flat"
d:So/Beam2/BeamAngularCutoffX       = 0.5 deg
d:So/Beam2/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam2/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition2/Parent="ExitWindow"
s:Ge/BeamPosition2/Type="Group"
d:Ge/BeamPosition2/TransX= 0. cm
d:Ge/BeamPosition2/TransY= 0.8 cm
d:Ge/BeamPosition2/TransZ= -101.9 cm
d:Ge/BeamPosition2/RotX=0. deg
d:Ge/BeamPosition2/RotY=0. deg
d:Ge/BeamPosition2/RotZ=0. deg

#Defining Beam 3
s:So/Beam3/Type                     = "Beam"
s:So/Beam3/Component                = "BeamPosition3"
s:So/Beam3/BeamParticle             = "proton"
d:So/Beam3/BeamEnergy               = 69.87 MeV
u:So/Beam3/BeamEnergySpread         = 1.1
s:So/Beam3/BeamPositionDistribution = "Flat"
s:So/Beam3/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 1 * 1.40925 mm
d:So/Beam3/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam3/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam3/BeamAngularDistribution  = "Flat"
d:So/Beam3/BeamAngularCutoffX       = 0.5 deg
d:So/Beam3/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam3/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition3/Parent="ExitWindow"
s:Ge/BeamPosition3/Type="Group"
d:Ge/BeamPosition3/TransX= 0.8 cm
d:Ge/BeamPosition3/TransY= 0.8 cm
d:Ge/BeamPosition3/TransZ= -101.9 cm
d:Ge/BeamPosition3/RotX=0. deg
d:Ge/BeamPosition3/RotY=0. deg
d:Ge/BeamPosition3/RotZ=0. deg

#Defining Beam 4
s:So/Beam4/Type                     = "Beam"
s:So/Beam4/Component                = "BeamPosition4"
s:So/Beam4/BeamParticle             = "proton"
d:So/Beam4/BeamEnergy               = 69.87 MeV
u:So/Beam4/BeamEnergySpread         = 1.1
s:So/Beam4/BeamPositionDistribution = "Flat"
s:So/Beam4/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam4/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam4/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam4/BeamAngularDistribution  = "Flat"
d:So/Beam4/BeamAngularCutoffX       = 0.5 deg
d:So/Beam4/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam4/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition4/Parent="ExitWindow"
s:Ge/BeamPosition4/Type="Group"
d:Ge/BeamPosition4/TransX= -0.8 cm
d:Ge/BeamPosition4/TransY= 0 cm
d:Ge/BeamPosition4/TransZ= -101.9 cm
d:Ge/BeamPosition4/RotX=0. deg
d:Ge/BeamPosition4/RotY=0. deg
d:Ge/BeamPosition4/RotZ=0. deg

#Defining Beam 5
s:So/Beam5/Type                     = "Beam"
s:So/Beam5/Component                = "BeamPosition5"
s:So/Beam5/BeamParticle             = "proton"
d:So/Beam5/BeamEnergy               = 69.87 MeV
u:So/Beam5/BeamEnergySpread         = 1.1
s:So/Beam5/BeamPositionDistribution = "Flat"
s:So/Beam5/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 1 * 1.40925 mm
d:So/Beam5/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam5/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam5/BeamAngularDistribution  = "Flat"
d:So/Beam5/BeamAngularCutoffX       = 0.5 deg
d:So/Beam5/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam5/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition5/Parent="ExitWindow"
s:Ge/BeamPosition5/Type="Group"
d:Ge/BeamPosition5/TransX= 0. cm
d:Ge/BeamPosition5/TransY= 0 cm
d:Ge/BeamPosition5/TransZ= -101.9 cm
d:Ge/BeamPosition5/RotX=0. deg
d:Ge/BeamPosition5/RotY=0. deg
d:Ge/BeamPosition5/RotZ=0. deg

#Defining Beam 6
s:So/Beam6/Type                     = "Beam"
s:So/Beam6/Component                = "BeamPosition6"
s:So/Beam6/BeamParticle             = "proton"
d:So/Beam6/BeamEnergy               = 69.87 MeV
u:So/Beam6/BeamEnergySpread         = 1.1
s:So/Beam6/BeamPositionDistribution = "Flat"
s:So/Beam6/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 1 * 1.40925 mm
d:So/Beam6/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam6/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam6/BeamAngularDistribution  = "Flat"
d:So/Beam6/BeamAngularCutoffX       = 0.5 deg
d:So/Beam6/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam6/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition6/Parent="ExitWindow"
s:Ge/BeamPosition6/Type="Group"
d:Ge/BeamPosition6/TransX= 0.8 cm
d:Ge/BeamPosition6/TransY= 0 cm
d:Ge/BeamPosition6/TransZ= -101.9 cm
d:Ge/BeamPosition6/RotX=0. deg
d:Ge/BeamPosition6/RotY=0. deg
d:Ge/BeamPosition6/RotZ=0. deg

#Defining Beam 7
s:So/Beam7/Type                     = "Beam"
s:So/Beam7/Component                = "BeamPosition7"
s:So/Beam7/BeamParticle             = "proton"
d:So/Beam7/BeamEnergy               = 69.87 MeV
u:So/Beam7/BeamEnergySpread         = 1.1
s:So/Beam7/BeamPositionDistribution = "Flat"
s:So/Beam7/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam7/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam7/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam7/BeamAngularDistribution  = "Flat"
d:So/Beam7/BeamAngularCutoffX       = 0.5 deg
d:So/Beam7/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam7/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition7/Parent="ExitWindow"
s:Ge/BeamPosition7/Type="Group"
d:Ge/BeamPosition7/TransX= -0.8 cm
d:Ge/BeamPosition7/TransY= -0.8 cm
d:Ge/BeamPosition7/TransZ= -101.9 cm
d:Ge/BeamPosition7/RotX=0. deg
d:Ge/BeamPosition7/RotY=0. deg
d:Ge/BeamPosition7/RotZ=0. deg

#Defining Beam 8
s:So/Beam8/Type                     = "Beam"
s:So/Beam8/Component                = "BeamPosition8"
s:So/Beam8/BeamParticle             = "proton"
d:So/Beam8/BeamEnergy               = 69.87 MeV
u:So/Beam8/BeamEnergySpread         = 1.1
s:So/Beam8/BeamPositionDistribution = "Flat"
s:So/Beam8/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam8/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam8/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam8/BeamAngularDistribution  = "Flat"
d:So/Beam8/BeamAngularCutoffX       = 0.5 deg
d:So/Beam8/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam8/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition8/Parent="ExitWindow"
s:Ge/BeamPosition8/Type="Group"
d:Ge/BeamPosition8/TransX= 0. cm
d:Ge/BeamPosition8/TransY= -0.8 cm
d:Ge/BeamPosition8/TransZ= -101.9 cm
d:Ge/BeamPosition8/RotX=0. deg
d:Ge/BeamPosition8/RotY=0. deg
d:Ge/BeamPosition8/RotZ=0. deg

#Defining Beam 9
s:So/Beam9/Type                     = "Beam"
s:So/Beam9/Component                = "BeamPosition9"
s:So/Beam9/BeamParticle             = "proton"
d:So/Beam9/BeamEnergy               = 69.87 MeV
u:So/Beam9/BeamEnergySpread         = 1.1
s:So/Beam9/BeamPositionDistribution = "Flat"
s:So/Beam9/BeamPositionCutoffShape  = "Ellipse"
#Get cutoff from 'spot size' as given by tp in matlab 0.5 * 1.40925 mm
d:So/Beam9/BeamPositionCutoffX      = 0.704625 mm
d:So/Beam9/BeamPositionCutoffY      = 0.704625 mm
#d:So//BeamPositionSpreadX      = 0.05 cm
#d:So//BeamPositionSpreadY      = 0.05 cm
s:So/Beam9/BeamAngularDistribution  = "Flat"
d:So/Beam9/BeamAngularCutoffX       = 0.5 deg
d:So/Beam9/BeamAngularCutoffY       = 0.5 deg
#d:So/Example/BeamAngularSpreadX       = 0.0032 rad
#d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Beam9/NumberOfHistoriesInRun   = NrHistories

s:Ge/BeamPosition9/Parent="ExitWindow"
s:Ge/BeamPosition9/Type="Group"
d:Ge/BeamPosition9/TransX= 0.8 cm
d:Ge/BeamPosition9/TransY= -0.8 cm
d:Ge/BeamPosition9/TransZ= -101.9 cm
d:Ge/BeamPosition9/RotX=0. deg
d:Ge/BeamPosition9/RotY=0. deg
d:Ge/BeamPosition9/RotZ=0. deg



#####################################################################################################################
################################################### GRAPHICAL OUTPUT ################################################
#####################################################################################################################
#s:Gr/ViewA/Type             = "OpenGL"
#i:Gr/ViewA/WindowSizeX      = 1024
#i:Gr/ViewA/WindowSizeY      = 768
#b:Gr/ViewA/IncludeAxes      = "True"
#u:Gr/ViewA/Zoom             = 2.
#s:Gr/ViewA/CenterOn = "World"
#s:Gr/ViewA/Projection       = "Orthogonal"
#d:Gr/ViewA/AxesSize         = 10 cm
#Ts/UseQt = "True"


 
#Physics List

sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"

b:Ts/PauseBeforeQuit = "True"


